private function A_UserInput(  ) void ;
private function B_CreateSequences(  ) void ;
private function C_LoadInstructions(  ) void ;
private function D_BarcodeScanning(  ) void ;
private function E_PipettingSteps(  ) void ;
private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable ;
private function _GetLabwareParameters( sequence i_seq, variable & o_arr[] ) void ;
private function _GetPipelineVariables( variable i_strConfigFilePath ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private variable rtnValue;
  private variable _;
  private variable intTraceLevel;
  private dialog customDialog_1;
  private variable strSerialNumber;
  private variable strJsonSearch;
  private variable intDestinationPlateIndex;
  private variable intBindPlateIndex;
  private variable arrAvailablePipelineSteps[];
  private variable intSourcePlateIndex;
  private variable intBeadResIndex;
  private variable intEtOHResIndex;
  private variable intEluResIndex;
  private variable intNumberOfAvailablePipelines;
  private variable strMethodFolderPath;
  private variable strUniversalConfigFileName;
  private dialog customDialog_2;
  private variable loopCounter1;
  private variable strImage_Dest;
  private variable strImage_Magnet;
  private variable strImage_Elu;
  private variable intPossibleLabwareTypes;
  private variable strImage_EtOH;
  private variable strImage_Src;
  private variable loopCounter2;
  private variable strImage_Beads;
  private variable strImage_Bind;
  private variable strImage_Waste;
  private variable intWasteResIndex;
  private variable blnForceStep;
  private variable blnStartingStep_1;
  private variable blnStepVisible1;
  private dialog customDialog_3;
  private variable blnStartingStep_16;
  private variable blnStepVisible9;
  private variable blnStartingStep_2;
  private variable blnStartingStep_3;
  private variable blnStartingStep_4;
  private variable blnStartingStep_5;
  private variable blnStepVisible10;
  private variable blnStartingStep_6;
  private variable blnStepVisible11;
  private variable blnStartingStep_7;
  private variable blnStepVisible12;
  private variable blnStartingStep_8;
  private variable blnStepVisible13;
  private variable blnStepVisible2;
  private variable blnStartingStep_9;
  private variable blnStartingStep_10;
  private variable blnStepVisible14;
  private variable blnStepVisible3;
  private variable blnStartingStep_11;
  private variable blnStepVisible15;
  private variable blnStepVisible4;
  private variable blnStartingStep_12;
  private variable blnStepVisible16;
  private variable blnStepVisible5;
  private variable blnStartingStep_13;
  private variable blnStepVisible6;
  private variable blnStartingStep_14;
  private variable blnStepVisible7;
  private variable blnStartingStep_15;
  private variable blnStepVisible8;
  private variable loopCounter4;
  private variable strInstrumentConfigFilePath;
  private variable strWorkflowConfigFilePath;
  private variable arrPossibleLabwares[];
  private variable intMagnetTypeIndex;
  private variable strPossibleLabware_Src;
  private variable strPossibleLabware_Bind;
  private variable strPossibleLabware_Dest;
  private variable strPossibleLabware_Bead;
  private variable strPossibleLabware_EtOH;
  private variable strPossibleLabware_Elu;
  private variable arrPossibleEluReservoirs[];
  private variable arrPossibleEtOHReservoirs[];
  private variable strPossibleLabware_Magnet;
  private variable arrPossibleWasteReservoirs[];
  private variable strPossibleLabware_Waste;
  private variable arrEtOHResOffsets[];
  private variable arrEluResOffsets[];
  private variable arrWasteResOffsets[];
  private variable arrActiveSteps[];
  private variable arrEveryStep[];
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                     USER INPUT: START\n**************************************************************************************************************************"));
  GITHUB_CHECKS::Sub1(Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\GenericSPRI\\.git\\"), 1);
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  intTraceLevel = TRACE_LEVEL_DEBUG;
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  intCOREChannel = 4;
  arrAvailablePipelineSteps.SetSize(0);
  strMethodFolderPath = Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\GenericSPRI\\");
  strUniversalConfigFileName = Translate("LabwareInstrumentConfig.json");
  strInstrumentConfigFilePath = StrConcat2(strMethodFolderPath, strUniversalConfigFileName);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, Translate("Approved Pipelines"), 0, arrAvailablePipelineSteps, _);
  intNumberOfAvailablePipelines=arrAvailablePipelineSteps.GetSize();
  if (intNumberOfAvailablePipelines == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No approved pipeline steps located"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strInstrumentConfigFilePath: "), strInstrumentConfigFilePath);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Approved Pipelines"), arrAvailablePipelineSteps);
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrAvailablePipelineSteps );
  customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", intPipelineChoice );
  customDialog_1.ShowCustomDialog();
  rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  intPipelineChoice = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
  if (rtnValue == 2)
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Pipeline step: "), arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1));
  strWorkflowConfigFilePath = StrConcat4(strMethodFolderPath, arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1), Translate(".json"), Translate(""));
  _GetPipelineVariables(strWorkflowConfigFilePath);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorkflowConfigFilePath: "), strWorkflowConfigFilePath);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, Translate("Possible Labware"), intTraceLevel, arrPossibleLabwares, _);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        intSourcePlateIndex = 1;
        intBindPlateIndex = 1;
        intDestinationPlateIndex = 1;
        intBeadResIndex = 1;
        intEtOHResIndex = 1;
        intEluResIndex = 1;
        intMagnetTypeIndex = 1;
        intWasteResIndex = 1;
      }
      strPossibleLabware_Src = arrPossibleSourcePlates.ElementAt( intSourcePlateIndex -1);
      strPossibleLabware_Bind = arrPossibleBindPlates.ElementAt( intBindPlateIndex -1);
      strPossibleLabware_Dest = arrPossibleDestinationPlates.ElementAt( intDestinationPlateIndex -1);
      strPossibleLabware_Bead = arrPossibleBeadReservoirs.ElementAt( intBeadResIndex -1);
      strPossibleLabware_EtOH = arrPossibleEtOHReservoirs.ElementAt( intEtOHResIndex -1);
      strPossibleLabware_Elu = arrPossibleEluReservoirs.ElementAt( intEluResIndex -1);
      strPossibleLabware_Magnet = arrPossibleMagnetTypes.ElementAt( intMagnetTypeIndex -1);
      strPossibleLabware_Waste = arrPossibleWasteReservoirs.ElementAt( intWasteResIndex -1);
      intPossibleLabwareTypes=arrPossibleLabwares.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Src == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Src = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Bind == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Bind = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Dest == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Dest = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Bead == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Beads = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_EtOH == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_EtOH = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Elu == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Elu = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Magnet == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Magnet = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intPossibleLabwareTypes;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (strPossibleLabware_Waste == arrPossibleLabwares.ElementAt( loopCounter2 -1))
          {
            strImage_Waste = arrPossibleLabwares.ElementAt( loopCounter2 -1);
            break;
          }
        }
      }
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrPossibleSourcePlates );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrPossibleBindPlates );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox3.ItemsSource", arrPossibleDestinationPlates );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox4.ItemsSource", arrPossibleBeadReservoirs );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox6.ItemsSource", arrPossibleEtOHReservoirs );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox7.ItemsSource", arrPossibleMagnetTypes );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox5.ItemsSource", arrPossibleEluReservoirs );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox8.ItemsSource", arrPossibleWasteReservoirs );
      customDialog_2.SetCustomDialogProperty( "comboBox1.SelectedIndex", intSourcePlateIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox2.SelectedIndex", intBindPlateIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox3.SelectedIndex", intDestinationPlateIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox4.SelectedIndex", intBeadResIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox6.SelectedIndex", intEtOHResIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox7.SelectedIndex", intMagnetTypeIndex );
      customDialog_2.SetCustomDialogProperty( "comboBox5.SelectedIndex", intEluResIndex );
      customDialog_2.SetCustomDialogProperty( "image_Src.Source", strImage_Src );
      customDialog_2.SetCustomDialogProperty( "image_Bind.Source", strImage_Bind );
      customDialog_2.SetCustomDialogProperty( "image_Dest.Source", strImage_Dest );
      customDialog_2.SetCustomDialogProperty( "image_Bead.Source", strImage_Beads );
      customDialog_2.SetCustomDialogProperty( "image_EtOH.Source", strImage_EtOH );
      customDialog_2.SetCustomDialogProperty( "image_Elu.Source", strImage_Elu );
      customDialog_2.SetCustomDialogProperty( "image_Magnet.Source", strImage_Magnet );
      customDialog_2.SetCustomDialogProperty( "numeric1.Value", intSourcePlateNumber );
      customDialog_2.SetCustomDialogProperty( "image_Waste.Source", strImage_Waste );
      customDialog_2.SetCustomDialogProperty( "comboBox8.SelectedIndex", intWasteResIndex );
      customDialog_2.SetCustomDialogProperty( "checkBox1.IsChecked", blnForceStep );
      customDialog_2.ShowCustomDialog();
      rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      intSourcePlateIndex = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      intBindPlateIndex = customDialog_2.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
      intDestinationPlateIndex = customDialog_2.GetCustomDialogProperty( "comboBox3.SelectedIndex" );
      intBeadResIndex = customDialog_2.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
      intEtOHResIndex = customDialog_2.GetCustomDialogProperty( "comboBox6.SelectedIndex" );
      intMagnetTypeIndex = customDialog_2.GetCustomDialogProperty( "comboBox7.SelectedIndex" );
      intEluResIndex = customDialog_2.GetCustomDialogProperty( "comboBox5.SelectedIndex" );
      strImage_Src = customDialog_2.GetCustomDialogProperty( "image_Src.Source" );
      strImage_Bind = customDialog_2.GetCustomDialogProperty( "image_Bind.Source" );
      strImage_Dest = customDialog_2.GetCustomDialogProperty( "image_Dest.Source" );
      strImage_Beads = customDialog_2.GetCustomDialogProperty( "image_Bead.Source" );
      strImage_EtOH = customDialog_2.GetCustomDialogProperty( "image_EtOH.Source" );
      strImage_Elu = customDialog_2.GetCustomDialogProperty( "image_Elu.Source" );
      strImage_Magnet = customDialog_2.GetCustomDialogProperty( "image_Magnet.Source" );
      intSourcePlateNumber = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
      strImage_Waste = customDialog_2.GetCustomDialogProperty( "image_Waste.Source" );
      intWasteResIndex = customDialog_2.GetCustomDialogProperty( "comboBox8.SelectedIndex" );
      blnForceStep = customDialog_2.GetCustomDialogProperty( "checkBox1.IsChecked" );
      if (rtnValue == 2)
      {
        abort;
      }
      if (rtnValue == 1)
      {
        break;
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intSourcePlateNumber: "), intSourcePlateNumber);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Src: "), strPossibleLabware_Src);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Bind: "), strPossibleLabware_Bind);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Dest: "), strPossibleLabware_Dest);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Bead: "), strPossibleLabware_Bead);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_EtOH: "), strPossibleLabware_EtOH);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Elu: "), strPossibleLabware_Elu);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Waste: "), strPossibleLabware_Waste);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strPossibleLabware_Magnet: "), strPossibleLabware_Magnet);
  strJsonSearch = StrConcat2(strPossibleLabware_Src, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrSourcePlateOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Bind, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrBindPlateOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Dest, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrDestinationPlateOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Bead, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrBeadResOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_EtOH, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrEtOHResOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Elu, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrEluResOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Magnet, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrMagnetOffsets, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Waste, Translate(",offsets"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrWasteResOffsets, _);
  strSerialNumber = GetSN(ML_STAR, 0);
  strJsonSearch = StrConcat4(Translate("Instrument_SN,"), strSerialNumber, Translate(",offsets"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strJsonSearch: "), strJsonSearch);
  JSONSEARCH::GetJSONEntry(strInstrumentConfigFilePath, strJsonSearch, intTraceLevel, arrInstrumentOffsets, _);
  arrActiveSteps.SetSize(0);
  if (arrEveryStep.ElementAt( 1 -1) == "Dilute DNA")
  {
    blnStepVisible1 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 2 -1) == "Transfer Beads")
  {
    blnStepVisible2 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 3 -1) == "Transfer DNA")
  {
    blnStepVisible3 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 4 -1) == "Incubate DNA + Beads")
  {
    blnStepVisible4 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 5 -1) == "Pulldown DNA")
  {
    blnStepVisible5 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 6 -1) <= "Transfer Beads #2")
  {
    blnStepVisible6 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 7 -1) <= "Transfer Supernatant")
  {
    blnStepVisible7 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 8 -1) <= "Incubate DNA + Beads #2")
  {
    blnStepVisible8 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 9 -1) <= "Pulldown DNA #2")
  {
    blnStepVisible9 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 10 -1) <= "Remove Supernatant")
  {
    blnStepVisible10 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 11 -1) <= "Wash Beads")
  {
    blnStepVisible11 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 12 -1) <= "Dry Beads")
  {
    blnStepVisible12 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 13 -1) <= "Transfer Eluate")
  {
    blnStepVisible13 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 14 -1) <= "Incubate Beads + Eluate")
  {
    blnStepVisible14 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 15 -1) <= "Pulldown Beads")
  {
    blnStepVisible15 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (arrEveryStep.ElementAt( 16 -1) <= "Recover DNA")
  {
    blnStepVisible16 = 1;
    arrActiveSteps.AddAsLast(1);
  }
  else
  {
    arrActiveSteps.AddAsLast(0);
  }
  if (blnForceStep == 1)
  {
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "radioButton1.IsEnabled", blnStepVisible1 );
    customDialog_3.SetCustomDialogProperty( "radioButton2.IsEnabled", blnStepVisible2 );
    customDialog_3.SetCustomDialogProperty( "radioButton3.IsEnabled", blnStepVisible3 );
    customDialog_3.SetCustomDialogProperty( "radioButton4.IsEnabled", blnStepVisible4 );
    customDialog_3.SetCustomDialogProperty( "radioButton5.IsEnabled", blnStepVisible5 );
    customDialog_3.SetCustomDialogProperty( "radioButton6.IsEnabled", blnStepVisible6 );
    customDialog_3.SetCustomDialogProperty( "radioButton7.IsEnabled", blnStepVisible7 );
    customDialog_3.SetCustomDialogProperty( "radioButton8.IsEnabled", blnStepVisible8 );
    customDialog_3.SetCustomDialogProperty( "radioButton9.IsEnabled", blnStepVisible9 );
    customDialog_3.SetCustomDialogProperty( "radioButton10.IsEnabled", blnStepVisible10 );
    customDialog_3.SetCustomDialogProperty( "radioButton11.IsEnabled", blnStepVisible11 );
    customDialog_3.SetCustomDialogProperty( "radioButton12.IsEnabled", blnStepVisible12 );
    customDialog_3.SetCustomDialogProperty( "radioButton13.IsEnabled", blnStepVisible13 );
    customDialog_3.SetCustomDialogProperty( "radioButton14.IsEnabled", blnStepVisible14 );
    customDialog_3.SetCustomDialogProperty( "radioButton15.IsEnabled", blnStepVisible15 );
    customDialog_3.SetCustomDialogProperty( "radioButton16.IsEnabled", blnStepVisible16 );
    customDialog_3.ShowCustomDialog();
    rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    blnStartingStep_1 = customDialog_3.GetCustomDialogProperty( "radioButton1.IsChecked" );
    blnStartingStep_2 = customDialog_3.GetCustomDialogProperty( "radioButton2.IsChecked" );
    blnStartingStep_3 = customDialog_3.GetCustomDialogProperty( "radioButton3.IsChecked" );
    blnStartingStep_4 = customDialog_3.GetCustomDialogProperty( "radioButton4.IsChecked" );
    blnStartingStep_5 = customDialog_3.GetCustomDialogProperty( "radioButton5.IsChecked" );
    blnStartingStep_6 = customDialog_3.GetCustomDialogProperty( "radioButton6.IsChecked" );
    blnStartingStep_7 = customDialog_3.GetCustomDialogProperty( "radioButton7.IsChecked" );
    blnStartingStep_8 = customDialog_3.GetCustomDialogProperty( "radioButton8.IsChecked" );
    blnStartingStep_9 = customDialog_3.GetCustomDialogProperty( "radioButton9.IsChecked" );
    blnStartingStep_10 = customDialog_3.GetCustomDialogProperty( "radioButton10.IsChecked" );
    blnStartingStep_11 = customDialog_3.GetCustomDialogProperty( "radioButton11.IsChecked" );
    blnStartingStep_12 = customDialog_3.GetCustomDialogProperty( "radioButton12.IsChecked" );
    blnStartingStep_13 = customDialog_3.GetCustomDialogProperty( "radioButton13.IsChecked" );
    blnStartingStep_14 = customDialog_3.GetCustomDialogProperty( "radioButton14.IsChecked" );
    blnStartingStep_15 = customDialog_3.GetCustomDialogProperty( "radioButton15.IsChecked" );
    blnStartingStep_16 = customDialog_3.GetCustomDialogProperty( "radioButton16.IsChecked" );
    if (rtnValue == 2)
    {
      abort;
    }
    {
      for(loopCounter4 = 0; loopCounter4 < 1;)
      {
        loopCounter4 = loopCounter4 + 1;
        if (blnStartingStep_1 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(1-1, 0);
        }
        if (blnStartingStep_2 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(2-1, 0);
        }
        if (blnStartingStep_3 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(3-1, 0);
        }
        if (blnStartingStep_4 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(4-1, 0);
        }
        if (blnStartingStep_5 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(5-1, 0);
        }
        if (blnStartingStep_6 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(6-1, 0);
        }
        if (blnStartingStep_7 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(7-1, 0);
        }
        if (blnStartingStep_8 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(8-1, 0);
        }
        if (blnStartingStep_9 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(9-1, 0);
        }
        if (blnStartingStep_10 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(10-1, 0);
        }
        if (blnStartingStep_11 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(11-1, 0);
        }
        if (blnStartingStep_12 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(12-1, 0);
        }
        if (blnStartingStep_13 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(13-1, 0);
        }
        if (blnStartingStep_14 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(14-1, 0);
        }
        if (blnStartingStep_15 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(15-1, 0);
        }
        if (blnStartingStep_16 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(16-1, 0);
        }
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Active Steps"), arrActiveSteps);
}

private function C_LoadInstructions(  ) void {
  private variable intTipsNeeded;
  private variable intSeqCap;
  private variable strLoadMessage;
  private variable rtnValue;
  private dialog customDialog_4;
  private variable __[];
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                LOAD INSTRUCTIONS: START\n**************************************************************************************************************************"));
  intSeqCap = intSourcePlateNumber * 96;
  seqPCR_SourcePlates.SetCount(intSeqCap);
  seqDWP_BindPlates.SetCount(intSeqCap);
  seqDWP_BindPlates2.SetCount(intSeqCap);
  ML_STAR.PCR_DestinationPlates.SetCount(intSeqCap);
  ML_STAR.trp_BindPlates_Magnet.SetCount(intSourcePlateNumber);
  if (blnSourcePlateCleanup == 0)
  {
    strLoadMessage = StrConcat4(Translate("Please load the DNA plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqPCR_SourcePlates, strLoadMessage);
  }
  if (blnSourcePlateCleanup == 1)
  {
    strLoadMessage = StrConcat4(Translate("Please load the DNA plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
  }
  else
  {
    strLoadMessage = StrConcat4(Translate("Please load the bind plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
  }
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqDWP_BindPlates, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" destination plates on the highlighted position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.PCR_DestinationPlates, strLoadMessage);
  strLoadMessage = StrConcat8(Translate("Please load "), intSourcePlateNumber, Translate(" "), Translate(" "), Translate(" magnets onto the highlighted position(s)"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.trp_BindPlates_Magnet, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of ethanol"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Ethanol, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of elution buffer"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Elution, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("90uL per well per plate of SPRI beads"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_BindingBeads, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load an empty waste container"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqWaste, strLoadMessage);
  JSONSEARCH::GetJSONEntry("", Translate("Processing_Details,intTipRequired"), 0, __, intTipsNeeded);
  intTipsNeeded = intSourcePlateNumber * intTipsNeeded;
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate(""), intTipsNeeded, 300, 1, Translate("TipCounter_300uLNTR"));
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (rtnValue == 2)
  {
    abort;
  }
}

private function E_PipettingSteps(  ) void {
  private timer tmrDNABind_Plate1;
  private timer tmrDNABind_Plate2;
  private timer tmrDNAPulldown_Plate1;
  private timer tmrDNAPulldown_Plate2;
  private variable strHHSDevice;
  private variable blnUSB;
  private variable blnSTAR;
  private variable rtnCode;
  private variable arrHHSDevices[];
  private variable intHHSNumber;
  private variable loopCounter1;
  private variable arrTransportSettings[];
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter6;
  private variable loopCounter7;
  private variable loopCounter5;
  private timer tmrDrying_Plate1;
  private timer tmrDrying_Plate2;
  private variable loopCounter8;
  private variable loopCounter9;
  private variable blnToolEject;
  private variable arrActiveSteps[];
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                    PIPETTING STEPS: START\n**************************************************************************************************************************"));
  MECC::TraceComment(Translate("---------- HHS Modules ----------"));
  blnSTAR = 1;
  blnUSB = 1;
  arrHHSDevices.SetSize(0);
  HSLHamHeaterShaker::SetSimulation(blnSimMode);
  intHHSNumber = SeqGetTotal(seqTrp_BindOnHHS);
  if (blnSimMode == 0)
  {
    {
      for(loopCounter6 = 0; loopCounter6 < intHHSNumber;)
      {
        loopCounter6 = loopCounter6 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS"), loopCounter6);
        if (blnSTAR == 1)
        {
          rtnCode = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, loopCounter6, strHHSDevice);
          if (rtnCode != 0)
          {
            MECC::TraceComment(Translate("Error Encountered"));
            blnSTAR = 0;
          }
        }
        if (blnUSB == 1)
        {
          rtnCode = HSLHamHeaterShaker::CreateUsbDevice(loopCounter6, strHHSDevice);
          if (rtnCode != 0)
          {
            MECC::TraceComment(Translate("Error Encountered"));
            blnUSB = 0;
          }
        }
        if (blnSTAR == 0)
        {
          if (blnUSB == 0)
          {
            break;
          }
        }
        arrHHSDevices.AddAsLast(strHHSDevice);
      }
    }
  }
  else
  {
    {
      for(loopCounter7 = 0; loopCounter7 < intHHSNumber;)
      {
        loopCounter7 = loopCounter7 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS"), loopCounter7);
        arrHHSDevices.AddAsLast(strHHSDevice);
      }
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of HHS Connections"), arrHHSDevices);
  {
    for(loopCounter1 = 0; loopCounter1 < intSourcePlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter1, Translate("/"), intSourcePlateNumber);
      if (blnBindOnHHS == 1)
      {
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter1, Translate(" at "), intBind_Temp, Translate("C"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 1. Transfer Eluate =========="));
      if (arrActiveSteps.ElementAt( 1 -1) == 1)
      {
        MECC::TraceComment(Translate("----- Get Tips -----"));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnTopUp_Eject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 2. Transfer Beads =========="));
      if (arrActiveSteps.ElementAt( 2 -1) == 1)
      {
        MECC::TraceComment(Translate("----- Get Tips -----"));
        if (arrActiveSteps.ElementAt( 1 -1) == 0)
        {
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnBead_Eject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 3. Transfer DNA =========="));
      if (arrActiveSteps.ElementAt( 3 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 2 -1) == 0)
        {
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
        if (blnSourcePlateCleanup == 0)
        {
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 4. DNA Binding =========="));
      if (arrActiveSteps.ElementAt( 4 -1) == 1)
      {
        if (blnBindOnHHS == 1)
        {
          _GetLabwareParameters(seqTrp_BindPlates, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Shake);
        }
        if (loopCounter1 == 1)
        {
          if( 0 == tmrDNABind_Plate1.SetTimer(intDNABindTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter1 == 2)
          {
            if( 0 == tmrDNABind_Plate2.SetTimer(intDNABindTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Binding Timer' #"), loopCounter1, Translate(" for "), intDNABindTime, Translate(" seconds"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (blnBindOnHHS == 1)
      {
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnHHS, 1);
      }
      SeqIncrement(seqPCR_SourcePlates, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
    }
  }
  SeqResetSequenceIndexes(seqPCR_SourcePlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  if (blnBindOnHHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindPlates);
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  MECC::TraceComment(Translate("========== Step 5. Bead Pulldown =========="));
  if (arrActiveSteps.ElementAt( 5 -1) == 1)
  {
    {
      for(loopCounter2 = 0; loopCounter2 < intSourcePlateNumber;)
      {
        loopCounter2 = loopCounter2 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter2, Translate("/"), intSourcePlateNumber);
        if (arrActiveSteps.ElementAt( 4 -1) == 1)
        {
          if (loopCounter2 == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
            if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter2 == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
              if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        MECC::TraceComment(Translate("----- Move to Magnet -----"));
        if (blnBindOnHHS == 1)
        {
          _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
          MECC::TraceComment(Translate("----- Stop Shakers -----"));
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          _GetLabwareParameters(seqTrp_BindPlates, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter2 == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNAPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter2 == 2)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
            if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNAPulldownTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if (blnBindOnHHS == 1)
        {
          SeqIncrement(seqTrp_BindOnHHS, 1);
        }
        else
        {
          SeqIncrement(seqTrp_BindPlates, 1);
        }
        SeqIncrement(seqTrp_BindOnMagnet, 1);
      }
    }
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
  }
  if (blnBindOnHHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  else
  {
    SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  }
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  MECC::TraceComment(Translate("========== Step 6-9 Second Bind =========="));
  if (blnDoubleSided == 1)
  {
    {
      for(loopCounter8 = 0; loopCounter8 < intSourcePlateNumber;)
      {
        loopCounter8 = loopCounter8 + 1;
        MECC::TraceComment(Translate("========== Step 6 Transfer Beads =========="));
        if (arrActiveSteps.ElementAt( 6 -1) == 1)
        {
          MECC::TraceComment(Translate("----- Get Tips -----"));
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          if (blnBead2_Eject == 1)
          {
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          }
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
        }
        MECC::TraceComment(Translate("========== Step 7 Transfer Supernatant =========="));
        if (arrActiveSteps.ElementAt( 7 -1) == 1)
        {
          if (arrActiveSteps.ElementAt( 5 -1) == 1)
          {
            if (loopCounter8 == 1)
            {
              if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
              if (loopCounter3 == 2)
              {
                if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
                {
                      MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
              else
              {
              }
            }
          }
          MECC::TraceComment(Translate("----- Get Tips -----"));
          if (arrActiveSteps.ElementAt( 6 -1) == 0)
          {
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          }
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
        }
        MECC::TraceComment(Translate("========== Step 8 DNA Binding =========="));
        if (arrActiveSteps.ElementAt( 8 -1) == 1)
        {
          MECC::TraceComment(Translate("----- OPTIONAL: Move to HHS -----"));
          if (blnBind2OnHHS == 1)
          {
            _GetLabwareParameters(seqTrp_BindPlates, arrTransportSettings);
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Shake);
          }
          if (loopCounter8 == 1)
          {
            if( 0 == tmrDNABind_Plate1.SetTimer(intDNABind2Time) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter8 == 2)
            {
              if( 0 == tmrDNABind_Plate2.SetTimer(intDNABind2Time) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Binding Timer' #"), loopCounter1, Translate(" for "), intDNABindTime, Translate(" seconds"), Translate(""));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
        }
        if (blnBind2OnHHS == 1)
        {
          SeqIncrement(seqTrp_BindPlates2, 1);
          SeqIncrement(seqTrp_BindOnHHS, 1);
        }
        SeqIncrement(seqDWP_BindOnMagnet, 96);
        SeqIncrement(seqDWP_BindPlates2, 96);
        SeqIncrement(seqTrp_BindOnMagnet, 1);
        SeqIncrement(seqTrp_BindPlates, 1);
      }
    }
    MECC::TraceComment(Translate("========== Step 9 Bead Pulldown =========="));
    if (arrActiveSteps.ElementAt( 9 -1) == 1)
    {
      {
        for(loopCounter9 = 0; loopCounter9 < intSourcePlateNumber;)
        {
          loopCounter9 = loopCounter9 + 1;
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter9: "), loopCounter9);
          if (arrActiveSteps.ElementAt( 8 -1) == 1)
          {
            if (loopCounter9 == 1)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
              if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
              if (loopCounter9 == 2)
              {
                TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
                if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
                {
                      MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
          }
          MECC::TraceComment(Translate("----- Move to Magnet -----"));
          if (blnBind2OnHHS == 1)
          {
            _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
            MECC::TraceComment(Translate("----- Stop Shakers -----"));
            HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
            HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          }
          else
          {
            _GetLabwareParameters(seqTrp_BindPlates, arrTransportSettings);
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          }
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          if (loopCounter9 == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
            if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNAPulldown2Time) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter9 == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
              if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNAPulldown2Time) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          if (blnBind2OnHHS == 1)
          {
            SeqIncrement(seqTrp_BindOnHHS, 1);
          }
          else
          {
            SeqIncrement(seqTrp_BindPlates2, 1);
          }
          SeqIncrement(seqTrp_BindOnMagnet, 1);
        }
      }
    }
    else
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
    }
    SeqRemoveAll(seqDWP_BindPlates);
    SeqRemoveAll(seqTrp_BindPlates);
    SeqCopySequence(seqTrp_BindPlates, seqTrp_BindPlates2);
    SeqCopySequence(seqDWP_BindPlates, seqDWP_BindPlates2);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Not performing double-sided clean-up"), Translate(""));
  }
  MECC::TraceComment(Translate("========== Step 10-16. Wash & Elution =========="));
  {
    for(loopCounter3 = 0; loopCounter3 < intSourcePlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter3, Translate("/"), intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 10. Remove Supernatant =========="));
      if (arrActiveSteps.ElementAt( 10 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 9 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
            }
          }
        }
        else
        {
          if (arrActiveSteps.ElementAt( 5 -1) == 1)
          {
            if (loopCounter3 == 1)
            {
              if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
              if (loopCounter3 == 2)
              {
                if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
                {
                      MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
              else
              {
              }
            }
          }
        }
        MECC::TraceComment(Translate("----- Get Tips -----"));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 11. Wash =========="));
      if (arrActiveSteps.ElementAt( 11 -1) == 1)
      {
        if (blnWashOnMagnet == 0)
        {
          _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
          MECC::TraceComment(Translate("----- Move to Home -----"));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        MECC::TraceComment(Translate("----- Ethanol Washes -----"));
        {
          for(loopCounter5 = 0; loopCounter5 < intWashCycles;)
          {
            loopCounter5 = loopCounter5 + 1;
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter5, Translate("/"), intWashCycles);
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 12. Drying =========="));
      if (arrActiveSteps.ElementAt( 12 -1) == 1)
      {
        if (blnWashOnMagnet == 1)
        {
          _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
          if (blnDryOnDeck == 1)
          {
            MECC::TraceComment(Translate("----- Move to Home -----"));
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          if (blnDryOnHHS == 1)
          {
            MECC::TraceComment(Translate("----- Move to HHS -----"));
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          if (blnDryOnMagnet == 1)
          {
            MECC::TraceComment(Translate("----- No Action Required -----"));
          }
        }
        else
        {
          if (blnDryOnDeck == 1)
          {
            MECC::TraceComment(Translate("----- No Action Required -----"));
          }
          if (blnDryOnHHS == 1)
          {
            MECC::TraceComment(Translate("----- Move to HHS -----"));
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          if (blnDryOnMagnet == 1)
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
        }
        if (loopCounter3 == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #1"), Translate(""));
          if( 0 == tmrDrying_Plate1.SetTimer(intBeadDryingTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter3 == 2)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #2"), Translate(""));
            if( 0 == tmrDrying_Plate2.SetTimer(intBeadDryingTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 13. Transfer Eluate =========="));
      if (arrActiveSteps.ElementAt( 13 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 12 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
            if( 0 == tmrDrying_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
              if( 0 == tmrDrying_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
            }
          }
        }
        _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
        if (blnDryOnHHS == 1)
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        if (blnDryOnDeck == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        if (blnDryOnMagnet == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        if (blnEluateOnMagnet == 1)
        {
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        else
        {
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        if (blnEluateOnMagnet == 1)
        {
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        else
        {
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 14. Incubation =========="));
      if (arrActiveSteps.ElementAt( 14 -1) == 1)
      {
        if (blnEluteOnHHS == 1)
        {
          _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
          if (blnEluateOnMagnet == 1)
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          }
          else
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          }
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (loopCounter3 == 1)
        {
          if( 0 == tmrDNABind_Plate1.SetTimer(intDNAEluteTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #1 for "), intDNAEluteTime, Translate(" seconds"), Translate(""));
        }
        else
        {
          if (loopCounter3 == 2)
          {
            if( 0 == tmrDNABind_Plate2.SetTimer(intDNAEluteTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #2 for "), intDNAEluteTime, Translate(" seconds"), Translate(""));
          }
          else
          {
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 15. Bead Pulldown =========="));
      if (arrActiveSteps.ElementAt( 15 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 14 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
            if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
              if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
            }
          }
        }
        MECC::TraceComment(Translate("----- Move to Magnet -----"));
        _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
        if (blnEluteOnHHS == 1)
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter3 == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBeadPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter3 == 2)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
            if( 0 == tmrDNAPulldown_Plate2.SetTimer(intBeadPulldownTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 16. Recover DNA =========="));
      if (arrActiveSteps.ElementAt( 16 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 15 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Pulldown Timer #1"), Translate(""));
          }
          else
          {
            if (loopCounter3 == 1)
            {
              if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Pulldown Timer #2"), Translate(""));
            }
            else
            {
            }
          }
        }
        MECC::TraceComment(Translate("----- Pickup Tips -----"));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        MECC::TraceComment(Translate("----- Eject Tips -----"));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        MECC::TraceComment(Translate("----- Move to Home -----"));
        if (loopCounter3 == intSourcePlateNumber)
        {
          blnToolEject = 1;
        }
        _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        SeqIncrement(seqWashPlate, 96);
        SeqIncrement(seqDWP_BindPlates, 96);
        SeqIncrement(seqDWP_BindOnMagnet, 96);
        SeqIncrement(seqPCR_DestinationPlates, 96);
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnMagnet, 1);
      }
    }
    if(0){
      NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, 1, 300);
    }
  }
}

private function B_CreateSequences(  ) void {
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                 SEQUENCE CREATION: START\n**************************************************************************************************************************"));
  SeqCopySequence(seqRes_BindingBeads, ML_STAR.res_Beads);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, arrBeadResOffsets.ElementAt( 1 -1), arrBeadResOffsets.ElementAt( 2 -1), arrBeadResOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqRes_WashBuffer, ML_STAR.res_Ethanol);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, arrEtOHResOffsets.ElementAt( 1 -1), arrEtOHResOffsets.ElementAt( 2 -1), arrEtOHResOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqRes_ElutionBuffer, ML_STAR.res_Elution);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, arrEluResOffsets.ElementAt( 1 -1), arrEluResOffsets.ElementAt( 2 -1), arrEluResOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqWaste, ML_STAR.res_Waste);
  if (blnRetainSupernatant == 1)
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.Cos_96_DW_2mL_0012);
  }
  else
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.res_Waste);
  }
  SeqCopySequence(seqPCR_SourcePlates, ML_STAR.PCR_SourcePlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, arrSourcePlateOffsets.ElementAt( 1 -1), arrSourcePlateOffsets.ElementAt( 2 -1), arrSourcePlateOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  if (blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.PCR_SourcePlates);
  }
  else
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.DWP_BindPlates);
  }
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, arrBindPlateOffsets.ElementAt( 1 -1), arrBindPlateOffsets.ElementAt( 2 -1), arrBindPlateOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqDWP_BindPlates2, ML_STAR.DWP_BindPlates2);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, arrBindPlateOffsets.ElementAt( 1 -1), arrBindPlateOffsets.ElementAt( 2 -1), arrBindPlateOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqPCR_DestinationPlates, ML_STAR.PCR_DestinationPlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, arrDestinationPlateOffsets.ElementAt( 1 -1), arrDestinationPlateOffsets.ElementAt( 2 -1), arrDestinationPlateOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.DWP_BindOnMagnet);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrMagnetOffsets.ElementAt( 1 -1), arrMagnetOffsets.ElementAt( 2 -1), arrMagnetOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrBindPlateOffsets.ElementAt( 1 -1), arrBindPlateOffsets.ElementAt( 2 -1), arrBindPlateOffsets.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  if (blnWashOnMagnet == 1)
  {
    SeqCopySequence(seqWashPlate, ML_STAR.DWP_BindOnMagnet);
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrMagnetOffsets.ElementAt( 1 -1), arrMagnetOffsets.ElementAt( 2 -1), arrMagnetOffsets.ElementAt( 3 -1));
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrBindPlateOffsets.ElementAt( 1 -1), arrBindPlateOffsets.ElementAt( 2 -1), arrBindPlateOffsets.ElementAt( 3 -1));
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  }
  else
  {
    SeqCopySequence(seqWashPlate, seqDWP_BindPlates);
  }
  SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_BindPlates_Home);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindPlates, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindPlates2, ML_STAR.trp_BindPlates2_Home);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindPlates2, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_BindPlates_Magnet);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindOnMagnet, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_BindPlates_HHS);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, ML_STAR.trp_BindPlates_HHS, arrInstrumentOffsets.ElementAt( 1 -1), arrInstrumentOffsets.ElementAt( 2 -1), arrInstrumentOffsets.ElementAt( 3 -1));
  SeqCopySequence(seqTips, ML_STAR.NTR_Tips);
}

private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable {
  private variable o_var;
  private variable _varType;
  private variable _intArrSize;
  private variable _blnArray;
  o_arr.SetSize( 0);
  JSONSEARCH::GetJSONEntry(i_strFilePath, i_strSearch, i_intTrace, o_arr, o_var);
  _blnArray = 0;
  _varType = StrGetType(o_var);
  if (_varType == "s")
  {
    if (o_var == "")
    {
      if (i_blnForceCheck == 1)
      {
        _blnArray = 1;
      }
    }
  }
  else
  {
    if (_varType == "i")
    {
      if (o_var == 0)
      {
        if (i_blnForceCheck == 1)
        {
          _blnArray = 1;
        }
      }
    }
    else
    {
      if (_varType == "f")
      {
        if (o_var == 0)
        {
          if (i_blnForceCheck == 1)
          {
            _blnArray = 1;
          }
        }
      }
      else
      {
        _blnArray = 1;
      }
    }
  }
  if (_blnArray == 1)
  {
    _intArrSize=o_arr.GetSize();
    if (_intArrSize == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with strJSONSearch: "), i_strSearch);
      abort;
    }
  }
  return (o_var);
}

private function _GetLabwareParameters( sequence i_seq, variable & o_arr[] ) void {
  private variable _intZSpeed_Get;
  private variable _intGripSpeed;
  private variable _intGripWidthOpen;
  private variable _intZSpeed_Place;
  private variable _intGripForce;
  private variable _intPlatePress;
  private variable _intXAcceleration;
  private variable _intGripWidth;
  private variable _intGripHeight;
  private variable _strJSONSearch;
  private variable _strLabwareAlias;
  private variable __[];
  private variable _strSeqName;
  o_arr.SetSize( 0);
  o_arr.SetSize(0);
  _strSeqName = SeqGetName(i_seq);
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Bead;
  }
  if (_strSeqName == "trp_BindPlates2_Home")
  {
    _strLabwareAlias = strPossibleLabware_Bind;
  }
  if (_strSeqName == "trp_BindPlates_Magnet")
  {
    _strLabwareAlias = strPossibleLabware_Bind;
  }
  if (_strSeqName == "trp_BindPlates_HHS")
  {
    _strLabwareAlias = strPossibleLabware_Bind;
  }
  if (_strSeqName == "trp_BindPlates_Home")
  {
    _strLabwareAlias = strPossibleLabware_Bind;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Dest;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Elu;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_EtOH;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Magnet;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Src;
  }
  if (_strSeqName == "")
  {
    _strLabwareAlias = strPossibleLabware_Waste;
  }
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripHeight"));
  _intGripHeight = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidth"));
  _intGripWidth = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidthOpen"));
  _intGripWidthOpen = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripForce"));
  _intGripForce = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripSpeed"));
  _intGripSpeed = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Get"));
  _intZSpeed_Get = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intXAcceleration"));
  _intXAcceleration = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Place"));
  _intZSpeed_Place = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intPlatePress"));
  _intPlatePress = _GetJSONValue(strInstrumentConfigFilePath, _strJSONSearch, 0, 0, __);
  o_arr.AddAsLast(_intGripHeight);
  o_arr.AddAsLast(_intGripWidth);
  o_arr.AddAsLast(_intGripWidthOpen);
  o_arr.AddAsLast(_intGripForce);
  o_arr.AddAsLast(_intGripSpeed);
  o_arr.AddAsLast(_intZSpeed_Get);
  o_arr.AddAsLast(_intXAcceleration);
  o_arr.AddAsLast(_intZSpeed_Place);
  o_arr.AddAsLast(_intPlatePress);
}

private function D_BarcodeScanning(  ) void {
}
