 namespace _Method { #include "CheckCarrierPresenceAbsence.hs_" }
 namespace _Method { #include "load_instructions.hs_" }
 namespace _Method { #include "NTRDirectUse_WGSPCRXP.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
#include "GenericSPRI\\Layouts\\261B_Layout1.res"
variable CarrierArray[];
variable intPlateCount;
global device ML_STAR ("GenericSPRI\\Layouts\\261B_Layout1.lay", "ML_STAR", hslTrue);
variable intInputVolume;
variable intNumberOfSourcePlates;
variable intBeadVolume;
variable intElutionVolume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    CHECKCARRIERPRESENCEABSENCE::_InitLibrary();
    LOAD_INSTRUCTIONS::_InitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    A_UserInput();
    B_LoadInstructions();
    CarrierArray.SetSize(0);
    CarrierArray.AddAsLast(Translate("MFX_CAR_5NTR4_0001"));
    CarrierArray.AddAsLast(Translate("MFX_CAR_5NTR4_0002"));
    CarrierArray.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
    CarrierArray.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0002"));
    CarrierArray.AddAsLast(Translate("MFX_CAR_4DWP_NestRB_Tube_0001"));
    CarrierArray.AddAsLast(Translate("RGT_CAR_5R60_A00_empty_0001"));
    if(0){
      CarrierArray.AddAsLast(Translate("SGC_MFX_CAR_HHSF30DWP_2DWP_NestRB_TipPark_0001"));
      CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, CarrierArray);
    }
    B_AMPure_Cleanup(ML_STAR.PCR_Source1_Epp_TwinTec, ML_STAR.PCR_Source2_Epp_TwinTec, ML_STAR.Bind_Plate_1_Nunc_1ml, ML_STAR.Bind_Plate_2_Nunc_1ml, ML_STAR.Bind_Plate_1_on_magnet_Nunc_1ml, ML_STAR.Bind_Plate_2_on_magnet_Nunc_1ml, ML_STAR.Waste_Abgene, ML_STAR.PCR_XP_Destination1_Epp_TwinTec, ML_STAR.PCR_XP_Destination2_Epp_TwinTec);
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Load_inst_Dest_Plates, Translate("The program is now complete. Seal your cleaned-up plates"));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.NTR_TIP_RACK_STACK, Translate("Remove all empty NTR racks and clean down the deck"));
    CHECKCARRIERPRESENCEABSENCE::_ExitLibrary();
    LOAD_INSTRUCTIONS::_ExitLibrary();
    NTRDIRECTUSE_WGSPCRXP::_ExitLibrary();
  } }
