private function A_UserInput(  ) void ;
private function B_LoadInstructions(  ) void ;
private function C_PipettingSteps(  ) void ;
private function ___B_AMPure_Cleanup( sequence & io_Seq_PCR_SOURCE_1, sequence & io_Seq_PCR_SOURCE_2, sequence & io_Seq_Nunc_Clean_Up_Plate_1, sequence & io_Seq_Nunc_Clean_Up_Plate_2, sequence & io_Seq_Nunc_Plate_1_on_Magnet, sequence & io_Seq_Nunc_Plate_2_on_Magnet, sequence & io_Seq_Waste, sequence & io_Seq_PCR_XP_Destination_Plate_1, sequence & io_Seq_PCR_XP_Destination_Plate_2 ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("=================================================================================\n=================================================================================\n\n\n                                                                   \\\\\\\\\\\\   Method END   //////\n                                                                \n\n=================================================================================\n================================================================================="));
}

private function ___B_AMPure_Cleanup( sequence & io_Seq_PCR_SOURCE_1, sequence & io_Seq_PCR_SOURCE_2, sequence & io_Seq_Nunc_Clean_Up_Plate_1, sequence & io_Seq_Nunc_Clean_Up_Plate_2, sequence & io_Seq_Nunc_Plate_1_on_Magnet, sequence & io_Seq_Nunc_Plate_2_on_Magnet, sequence & io_Seq_Waste, sequence & io_Seq_PCR_XP_Destination_Plate_1, sequence & io_Seq_PCR_XP_Destination_Plate_2 ) void {
  private timer TimerBeadIncubation1;
  private timer TimerBeadIncubation2;
  private variable loopCounter1;
  private variable int_EthanolToWaste;
  private timer TimerEtOH;
  private timer TimerBeadOnMag1;
  private timer TimerBeadOnMag2;
  private variable i_intParkCoreGrips;
  private timer ElutionIncubation1;
  private timer ElutionIncubation2;
  private variable intVolElutionMix;
  private variable intVolEtOH1;
  private variable intVolBeads;
  private variable intVolEtOH2;
  private variable intVolElutionAddition;
  private variable intVolSamplesBeadsMixing;
  private variable intVolSamples;
  private variable intVolFinalElute;
  private variable intVolSupernatent;
  private timer TimerElutionPlate1;
  private timer TimerElutionPlate2;
  private variable arrVraiblesTRC[];
  MECC::TraceComment(Translate("=================================================================================\n=================================================================================\n\n                                                                   \\\\\\\\\\\\Start//////\n                                                                B_AMPure_Cleanup\n\n=================================================================================\n================================================================================="));
  intVolBeads = 60;
  intVolSamples = 75;
  intVolSamplesBeadsMixing = 110;
  intVolSupernatent = 135;
  intVolEtOH1 = 200;
  intVolEtOH2 = 215;
  intVolElutionAddition = 27.5;
  intVolElutionMix = 22.5;
  intVolFinalElute = 25;
  arrVraiblesTRC.SetSize(0);
  arrVraiblesTRC.AddAsLast(Translate("intVolBeads"));
  arrVraiblesTRC.AddAsLast(intVolBeads);
  arrVraiblesTRC.AddAsLast(Translate("intVolSamples"));
  arrVraiblesTRC.AddAsLast(intVolSamples);
  arrVraiblesTRC.AddAsLast(Translate("intVolSamplesBeadsMixing"));
  arrVraiblesTRC.AddAsLast(intVolSamplesBeadsMixing);
  arrVraiblesTRC.AddAsLast(Translate("intVolSupernatent"));
  arrVraiblesTRC.AddAsLast(intVolSupernatent);
  arrVraiblesTRC.AddAsLast(Translate("intVolEtOH1"));
  arrVraiblesTRC.AddAsLast(intVolEtOH1);
  arrVraiblesTRC.AddAsLast(Translate("intVolEtOH2"));
  arrVraiblesTRC.AddAsLast(intVolEtOH2);
  arrVraiblesTRC.AddAsLast(Translate("intVolElutionAddition"));
  arrVraiblesTRC.AddAsLast(intVolElutionAddition);
  arrVraiblesTRC.AddAsLast(Translate("intVolElutionMix"));
  arrVraiblesTRC.AddAsLast(intVolElutionMix);
  arrVraiblesTRC.AddAsLast(Translate("intVolFinalElute"));
  arrVraiblesTRC.AddAsLast(intVolFinalElute);
  TRACELEVEL::TraceArray(1, Translate("==========================================Array of Variables ="), arrVraiblesTRC);
  MECC::TraceComment(Translate("This's to allow the head to use the nested tips. Check the submethod for the description."));
  NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_96, ML_STAR.NTR_96_Racks, ML_STAR.NTR_TIP_RACK_STACK, Translate("96_NTR_TIPS"), 300, 1, 1);
  MECC::TraceComment(Translate("Adding Ampure Beads to a Nunc plate"));
  MECC::TraceComment(Translate("Check the aspiration height\n"));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  MECC::TraceComment(Translate("Adding DNA to the Nunc plate"));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if( 0 == TimerBeadIncubation1.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (intPlateCount == 2)
  {
    MECC::TraceComment(Translate("Adding Ampure Beads to a Nunc plate"));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    MECC::TraceComment(Translate("Adding DNA to the Nunc plate"));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    if( 0 == TimerBeadIncubation2.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  if( 0 == TimerBeadIncubation1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == TimerBeadOnMag1.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (intPlateCount == 2)
  {
    if( 0 == TimerBeadIncubation2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    if( 0 == TimerBeadOnMag2.SetTimer(120) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  if( 0 == TimerBeadOnMag1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  {
    for(loopCounter1 = 0; loopCounter1 < 2;)
    {
      loopCounter1 = loopCounter1 + 1;
      MECC::TraceComment(Translate("Pre-wet tips with Ethanol"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      MECC::TraceComment(Translate("Add Ethanol"));
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
      MECC::TraceComment(Translate("Remove Ethanol"));
      if( 0 == TimerEtOH.SetTimer(15) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == TimerEtOH.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (loopCounter1 == 1)
      {
        int_EthanolToWaste = intVolEtOH1;
      }
      else
      {
        int_EthanolToWaste = intVolEtOH2;
      }
      {
        	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
      }
      {
        	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
      }
    }
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == TimerEtOH.SetTimer(30) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (intPlateCount == 2)
  {
    NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_96, ML_STAR.NTR_96_Racks, ML_STAR.NTR_TIP_RACK_STACK, 1, 300);
  }
  if( 0 == TimerEtOH.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if( 0 == ElutionIncubation1.SetTimer(180) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == ElutionIncubation1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  MECC::TraceComment(Translate("Move resuspended beads/DNA to magnet"));
  if( 0 == TimerElutionPlate1.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == TimerElutionPlate1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("Dispense DNA supernatant into PCR XP Destination Plate"));
  {
    	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
  }
  {
    	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
  }
  if (intPlateCount == 2)
  {
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    {
      for(loopCounter1 = 0; loopCounter1 < 2;)
      {
        loopCounter1 = loopCounter1 + 1;
        MECC::TraceComment(Translate("Pre-wet tips with Ethanol"));
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        MECC::TraceComment(Translate("Add Ethanol"));
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
        MECC::TraceComment(Translate("Remove Ethanol"));
        if( 0 == TimerEtOH.SetTimer(15) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == TimerEtOH.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter1 == 1)
        {
          int_EthanolToWaste = 200;
        }
        else
        {
          int_EthanolToWaste = 210;
        }
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    if( 0 == TimerEtOH.SetTimer(30) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == TimerEtOH.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  if (intPlateCount == 2)
  {
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
    if( 0 == ElutionIncubation2.SetTimer(180) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  if (intPlateCount == 2)
  {
    if( 0 == ElutionIncubation1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    MECC::TraceComment(Translate("Move resuspended beads/DNA to magnet"));
    if( 0 == TimerElutionPlate2.SetTimer(120) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == TimerElutionPlate2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("Dispense DNA supernatant into PCR XP Destination Plate"));
    {
      	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
    }
    {
      	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
    }
  }
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_96, ML_STAR.NTR_96_Racks, ML_STAR.NTR_TIP_RACK_STACK, 1, 300);
  MECC::TraceComment(Translate("=================================================================================\n=================================================================================\n\n                                                                   \\\\\\\\\\\\END//////\n                                                                B_AMPure_Cleanup\n\n=================================================================================\n================================================================================="));
}

private function A_UserInput(  ) void {
  private variable rtnValue;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable blnOverrideDetails;
  private variable intPipelineChoice;
  private variable loopCounter1;
  private variable arrAvailablePipelineSteps[];
  arrAvailablePipelineSteps.SetSize(0);
  intInputVolume = 50;
  intBeadVolume = 35;
  intElutionVolume = 30;
  arrAvailablePipelineSteps.AddAsLast(Translate("SGE - IL2 PCR XP"));
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrAvailablePipelineSteps );
      customDialog_1.SetCustomDialogProperty( "numeric1.Value", intNumberOfSourcePlates );
      customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", intPipelineChoice );
      customDialog_1.ShowCustomDialog();
      rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      intNumberOfSourcePlates = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      intPipelineChoice = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      blnOverrideDetails = customDialog_1.GetCustomDialogProperty( "checkBox1.IsChecked" );
      if (rtnValue == 2)
      {
        abort;
      }
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "numeric1.Value", intNumberOfSourcePlates );
      customDialog_2.SetCustomDialogProperty( "numeric1.IsEnabled", blnOverrideDetails );
      customDialog_2.SetCustomDialogProperty( "numeric2.IsEnabled", blnOverrideDetails );
      customDialog_2.SetCustomDialogProperty( "numeric3.IsEnabled", blnOverrideDetails );
      customDialog_2.ShowCustomDialog();
      rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      intNumberOfSourcePlates = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
      if (rtnValue == 1)
      {
        break;
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intNumberOfSourcePlates: "), intNumberOfSourcePlates);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intPipelineChoice: "), intPipelineChoice);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> blnOverrideDetails: "), blnOverrideDetails);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intInputVolume: "), intInputVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intBeadVolume: "), intBeadVolume);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intElutionVolume: "), intElutionVolume);
}

private function B_LoadInstructions(  ) void {
  private dialog customDialog_3;
  private dialog dialogHandle_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private variable strLoadingMessageScanSrc;
  private variable strScannedBedDest;
  private variable strLoadMessageMag;
  private variable strLinkImage;
  private variable strScannedBedSource;
  private variable intIndexCounter;
  private variable strLoadingMessageScanSrcBed;
  private variable strLoadMessageSource;
  private variable strLoadMessageBind;
  private variable strLoadMessageDestBed;
  private variable strScannedDest;
  private variable strLoadMessageDest;
  private variable loopCounter3;
  private variable intTipsNeeded;
  private variable strLoadingMessageScanDest;
  private variable strScannedSource;
  private variable arrBedsBarcodesDest[];
  private variable arrBedsBarcodesSource[];
  private variable intSeqCap;
  private variable strLoadMessage;
  intSeqCap = intNumberOfSourcePlates * 96;
  ML_STAR.Load_SourcePlates.SetCount(intSeqCap);
  ML_STAR.Load_BindingPlates.SetCount(intSeqCap);
  ML_STAR.Load_DestinationPlates.SetCount(intSeqCap);
  ML_STAR.Load_Magnets.SetCount(intSeqCap);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of ethanol"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of elution buffer"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load a deep-well plate containing"), Translate("150uL per well of SPRI beads"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load an empty waste reservoir"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Waste, strLoadMessage);
  intTipsNeeded = intPlateCount * 480;
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTR_96, ML_STAR.NTR_96_Racks, ML_STAR.NTR_TIP_RACK_STACK, Translate("in positions 1-5 on TIP_CAR_NTR on tracks 1-6"), intTipsNeeded, 300, 1, Translate("NTR_300_96MCH"));
  arrBedsBarcodesSource.SetSize(0);
  arrBedsBarcodesSource.AddAsLast(Translate("Source1"));
  arrBedsBarcodesSource.AddAsLast(Translate("Source2"));
  arrBedsBarcodesDest.SetSize(0);
  arrBedsBarcodesDest.AddAsLast(Translate("Dest1"));
  arrBedsBarcodesDest.AddAsLast(Translate("Dest2"));
  intIndexCounter = 0;
  intIndexCounter = intIndexCounter + 1;
  {
    for(loopCounter3 = 0; loopCounter3 < intPlateCount;)
    {
      loopCounter3 = loopCounter3 + 1;
      strLoadingMessageScanSrc = StrConcat4(Translate("Scan the SOURCE "), loopCounter3, Translate(" PLATE for the source plate"), Translate(""));
      strLoadingMessageScanSrcBed = StrConcat4(Translate("Scan the SOURCE  "), loopCounter3, Translate(" BED for the source plate"), Translate(""));
      strLinkImage = StrConcat4(Translate("link"), loopCounter3, Translate(""), Translate(""));
      customDialog_5.InitCustomDialog("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");
      customDialog_5.SetCustomDialogProperty( "textBlock1.Text", strLoadingMessageScanSrc );
      customDialog_5.SetCustomDialogProperty( "textBlock2.Text", strLoadingMessageScanSrcBed );
      customDialog_5.SetCustomDialogProperty( "image2.Source", strImageLinkSrc );
      customDialog_5.ShowCustomDialog();
      strScannedSource = customDialog_5.GetCustomDialogProperty( "textBox1.Text" );
      strScannedBedSource = customDialog_5.GetCustomDialogProperty( "textBox3.Text" );
      strLoadingMessageScanDest = StrConcat4(Translate("Scan the DESTINATION "), loopCounter3, Translate(" PLATE for the source plate"), Translate(""));
      strLoadMessageDestBed = StrConcat4(Translate("Scan the DESTINATION "), loopCounter3, Translate(" BED for the source plate"), Translate(""));
      customDialog_7.InitCustomDialog("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");
      customDialog_7.SetCustomDialogProperty( "textBlock1.Text", strLoadingMessageScanDest );
      customDialog_7.SetCustomDialogProperty( "textBlock2.Text", strLoadMessageDestBed );
      customDialog_7.SetCustomDialogProperty( "image2.Source", strImageLinkDest );
      customDialog_7.ShowCustomDialog();
      strScannedDest = customDialog_7.GetCustomDialogProperty( "textBox1.Text" );
      strScannedBedDest = customDialog_7.GetCustomDialogProperty( "textBox3.Text" );
      if (strScannedDest != strScannedSource)
      {
        customDialog_3.InitCustomDialog("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");
        customDialog_3.ShowCustomDialog();
        abort;
      }
      else
      {
        if (strScannedBedSource != arrBedsBarcodesSource.ElementAt( loopCounter3 -1))
        {
          customDialog_8.InitCustomDialog("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");
          customDialog_8.ShowCustomDialog();
          abort;
        }
        if (strScannedBedDest != arrBedsBarcodesDest.ElementAt( loopCounter3 -1))
        {
          customDialog_6.InitCustomDialog("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");
          customDialog_6.ShowCustomDialog();
          abort;
        }
      }
    }
  }
  dialogHandle_4.SetOutput(Translate("Deck is loaded. Check all carriers are pushed into place and close the door. Click 'OK' to start the protocol"));
  dialogHandle_4.ShowOutput(Translate("Start Protocol"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.NTR_TIP_RACK_STACK, Translate("Remove all empty NTR racks"));
}

private function C_PipettingSteps(  ) void {
}
