private function A_UserInput(  ) void ;
private function B_CreateSequences(  ) void ;
private function C_LoadInstructions(  ) void ;
private function D_BarcodeScanning(  ) void ;
private function E_PipettingSteps(  ) void ;
private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable ;
private function _GetLabwareParameters( variable i_strLabware, variable & o_arr[] ) void ;
private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private variable rtnValue;
  private variable _;
  private variable intTraceLevel;
  private variable strJsonSearch;
  private variable strMethodFolderPath;
  private variable strConfigName;
  private variable intIndex_Mag;
  private variable intIndex_Dest;
  private variable intIndex_Src;
  private variable intIndex_Bead;
  private variable intIndex_Waste;
  private variable intIndex_EtOH;
  private variable loopCounter1;
  private variable intIndex_Elu;
  private variable intIndex_Bind;
  private variable arrPossibleLabware[];
  private variable blnForceStep;
  private dialog customDialog_1;
  private variable blnStartingStep_16;
  private variable blnStartingStep_1;
  private variable blnStartingStep_2;
  private variable blnStartingStep_3;
  private variable blnStartingStep_4;
  private variable strSN;
  private variable blnStartingStep_5;
  private variable blnStartingStep_6;
  private variable intNumberOfPossibleSteps;
  private variable blnStartingStep_7;
  private variable blnStartingStep_8;
  private variable blnStartingStep_9;
  private variable blnStartingStep_10;
  private variable blnStartingStep_11;
  private variable loopCounter2;
  private variable blnStartingStep_12;
  private variable loopCounter3;
  private variable blnStartingStep_13;
  private variable blnStartingStep_14;
  private variable blnStartingStep_15;
  private variable arrEveryStep[];
  private dialog customDialog_2;
  private variable blnStepVisible_5;
  private variable blnStepVisible_6;
  private variable blnStepVisible_7;
  private variable blnStepVisible_8;
  private variable blnStepVisible_9;
  private variable blnStepVisible_10;
  private variable blnStepVisible_11;
  private variable blnStepVisible_12;
  private variable blnStepVisible_13;
  private variable blnStepVisible_14;
  private variable blnStepVisible_15;
  private variable blnStepVisible_16;
  private variable blnStepVisible_1;
  private variable blnStepVisible_2;
  private variable blnStepVisible_3;
  private variable blnStepVisible_4;
  private dialog customDialog_3;
  private variable intAvailableWorkflows_ArraySize;
  private variable strCurrentWorkflow;
  private variable intWorkflowIndex;
  private variable arrAvailableWorkflows[];
  private variable arrWorkflowSteps[];
  private variable __[];
  private variable blnBindVisible;
  private variable strMethodConfigFolderPath;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                     USER INPUT: START\n**************************************************************************************************************************"));
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  intCOREChannel = 4;
  arrAvailableWorkflows.SetSize(0);
  strMethodFolderPath = GetMethodFolder(0);
  strConfigName = Translate("LabwareInstrumentConfig.json");
  StrReplace(strMethodFolderPath, Translate("Method\\"), Translate(""));
  strMethodConfigFolderPath = StrConcat2(strMethodFolderPath, Translate(".config\\"));
  strConfigFilePath_General = StrConcat2(strMethodConfigFolderPath, strConfigName);
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, Translate("Approved Pipelines"), 0, arrAvailableWorkflows, _);
  intAvailableWorkflows_ArraySize=arrAvailableWorkflows.GetSize();
  if (intAvailableWorkflows_ArraySize == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No approved workflows found"), Translate(""));
    abort;
  }
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, Translate("Trace-Level"), 0, __, intTraceLevel);
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- General Config Path: "), strConfigFilePath_General);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Approved Workflows"), arrAvailableWorkflows);
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrAvailableWorkflows );
  customDialog_3.ShowCustomDialog();
  rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  intWorkflowIndex = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
  if (rtnValue == 2)
  {
    abort;
  }
  strCurrentWorkflow=arrAvailableWorkflows.GetAt(intWorkflowIndex-1);
  strConfigFilePath_Workflow = StrConcat4(strMethodConfigFolderPath, strCurrentWorkflow, Translate(".json"), Translate(""));
  arrActiveSteps.SetSize(0);
  _GetJSONValue(strConfigFilePath_Workflow, Translate("StepSelection_Details"), 1, 1, arrWorkflowSteps);
  _GetJSONValue(strConfigFilePath_General, Translate("Every Step"), 1, 1, arrEveryStep);
  intNumberOfPossibleSteps=arrEveryStep.GetSize();
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfPossibleSteps;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (arrWorkflowSteps.ElementAt( loopCounter2 -1) == arrEveryStep.ElementAt( loopCounter2 -1))
      {
        arrActiveSteps.AddAsLast(1);
      }
      else
      {
        arrActiveSteps.AddAsLast(0);
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Workflow step: "), strCurrentWorkflow);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate(">> Workflow config filepath: "), strConfigFilePath_Workflow);
  _GetPipelineVariables(strConfigFilePath_Workflow, strCurrentWorkflow);
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, Translate("Possible Labware"), 0, arrPossibleLabware, _);
  intIndex_Src = 1;
  intIndex_Bind = 1;
  intIndex_Dest = 1;
  intIndex_Bead = 1;
  intIndex_EtOH = 1;
  intIndex_Elu = 1;
  intIndex_Mag = 1;
  intIndex_Waste = 1;
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      strPossibleLabware_Src=arrPossibleLabware_Src.GetAt(intIndex_Src-1);
      strPossibleLabware_Bind=arrPossibleLabware_Bind.GetAt(intIndex_Bind-1);
      strPossibleLabware_Dest=arrPossibleLabware_Dest.GetAt(intIndex_Dest-1);
      strPossibleLabware_Bead=arrPossibleLabware_Bead.GetAt(intIndex_Bead-1);
      strPossibleLabware_EtOH=arrPossibleLabware_EtOH.GetAt(intIndex_EtOH-1);
      strPossibleLabware_Elu=arrPossibleLabware_Elu.GetAt(intIndex_Elu-1);
      strPossibleLabware_Mag=arrPossibleLabware_Mag.GetAt(intIndex_Mag-1);
      strPossibleLabware_Waste=arrPossibleLabware_Waste.GetAt(intIndex_Waste-1);
      if (blnSourcePlateCleanup == 1)
      {
        blnBindVisible = 0;
        arrPossibleLabware_Bind.SetSize(0);
        arrPossibleLabware_Bind.AddAsLast(Translate("---"));
      }
      else
      {
        blnBindVisible = 1;
      }
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Src.ItemsSource", arrPossibleLabware_Src );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Bind.ItemsSource", arrPossibleLabware_Bind );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Dest.ItemsSource", arrPossibleLabware_Dest );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Bead.ItemsSource", arrPossibleLabware_Bead );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_EtOH.ItemsSource", arrPossibleLabware_EtOH );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Mag.ItemsSource", arrPossibleLabware_Mag );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Elu.ItemsSource", arrPossibleLabware_Elu );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox_Waste.ItemsSource", arrPossibleLabware_Waste );
      customDialog_1.SetCustomDialogProperty( "comboBox_Src.SelectedIndex", intIndex_Src );
      customDialog_1.SetCustomDialogProperty( "comboBox_Bind.SelectedIndex", intIndex_Bind );
      customDialog_1.SetCustomDialogProperty( "comboBox_Bind.IsEnabled", blnBindVisible );
      customDialog_1.SetCustomDialogProperty( "comboBox_Dest.SelectedIndex", intIndex_Dest );
      customDialog_1.SetCustomDialogProperty( "comboBox_Bead.SelectedIndex", intIndex_Bead );
      customDialog_1.SetCustomDialogProperty( "comboBox_EtOH.SelectedIndex", intIndex_EtOH );
      customDialog_1.SetCustomDialogProperty( "comboBox_Mag.SelectedIndex", intIndex_Mag );
      customDialog_1.SetCustomDialogProperty( "comboBox_Elu.SelectedIndex", intIndex_Elu );
      customDialog_1.SetCustomDialogProperty( "image_Src.Source", strPossibleLabware_Src );
      customDialog_1.SetCustomDialogProperty( "image_Bind.Source", strPossibleLabware_Bind );
      customDialog_1.SetCustomDialogProperty( "image_Bind.IsVisible", blnBindVisible );
      customDialog_1.SetCustomDialogProperty( "image_Dest.Source", strPossibleLabware_Dest );
      customDialog_1.SetCustomDialogProperty( "image_Bead.Source", strPossibleLabware_Bead );
      customDialog_1.SetCustomDialogProperty( "image_EtOH.Source", strPossibleLabware_EtOH );
      customDialog_1.SetCustomDialogProperty( "image_Elu.Source", strPossibleLabware_Elu );
      customDialog_1.SetCustomDialogProperty( "image_Magnet.Source", strPossibleLabware_Mag );
      customDialog_1.SetCustomDialogProperty( "numeric1.Value", intSourcePlateNumber );
      customDialog_1.SetCustomDialogProperty( "image_Waste.Source", strPossibleLabware_Waste );
      customDialog_1.SetCustomDialogProperty( "comboBox_Waste.SelectedIndex", intIndex_Waste );
      customDialog_1.SetCustomDialogProperty( "checkBox_ForceStart.IsChecked", blnForceStep );
      customDialog_1.ShowCustomDialog();
      rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      intIndex_Src = customDialog_1.GetCustomDialogProperty( "comboBox_Src.SelectedIndex" );
      intIndex_Bind = customDialog_1.GetCustomDialogProperty( "comboBox_Bind.SelectedIndex" );
      intIndex_Dest = customDialog_1.GetCustomDialogProperty( "comboBox_Dest.SelectedIndex" );
      intIndex_Bead = customDialog_1.GetCustomDialogProperty( "comboBox_Bead.SelectedIndex" );
      intIndex_EtOH = customDialog_1.GetCustomDialogProperty( "comboBox_EtOH.SelectedIndex" );
      intIndex_Mag = customDialog_1.GetCustomDialogProperty( "comboBox_Mag.SelectedIndex" );
      intIndex_Elu = customDialog_1.GetCustomDialogProperty( "comboBox_Elu.SelectedIndex" );
      intSourcePlateNumber = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      intIndex_Waste = customDialog_1.GetCustomDialogProperty( "comboBox_Waste.SelectedIndex" );
      blnForceStep = customDialog_1.GetCustomDialogProperty( "checkBox_ForceStart.IsChecked" );
      if (rtnValue == 2)
      {
        abort;
      }
      if (rtnValue == 1)
      {
        break;
      }
    }
  }
  strJsonSearch = StrConcat2(strPossibleLabware_Src, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Src, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Bind, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Bind, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Dest, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Dest, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Bead, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Bead, _);
  strJsonSearch = StrConcat2(strPossibleLabware_EtOH, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_EtOH, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Elu, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Elu, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Waste, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Waste, _);
  strJsonSearch = StrConcat2(strPossibleLabware_Mag, Translate(",offsets"));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Mag, _);
  strSN = GetSN(ML_STAR, 0);
  strJsonSearch = StrConcat4(Translate("Instrument_SN,"), strSN, Translate(",offsets"), Translate(""));
  JSONSEARCH::GetJSONEntry(strConfigFilePath_General, strJsonSearch, 0, arrOffsets_Instrument, _);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Source Labware: "), strPossibleLabware_Src);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Bind Labware: "), strPossibleLabware_Bind);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Destination Labware: "), strPossibleLabware_Dest);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Bead Labware: "), strPossibleLabware_Bead);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Ethanol Labware: "), strPossibleLabware_EtOH);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Elution Labware: "), strPossibleLabware_Elu);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Waste Labware: "), strPossibleLabware_Waste);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Magnet: "), strPossibleLabware_Mag);
  if (blnForceStep == 1)
  {
    if (arrActiveSteps.ElementAt( 1 -1) == 1)
    {
      blnStepVisible_1 = 1;
    }
    if (arrActiveSteps.ElementAt( 2 -1) == 1)
    {
      blnStepVisible_2 = 1;
    }
    if (arrActiveSteps.ElementAt( 3 -1) == 1)
    {
      blnStepVisible_3 = 1;
    }
    if (arrActiveSteps.ElementAt( 4 -1) == 1)
    {
      blnStepVisible_4 = 1;
    }
    if (arrActiveSteps.ElementAt( 5 -1) == 1)
    {
      blnStepVisible_5 = 1;
    }
    if (arrActiveSteps.ElementAt( 6 -1) == 1)
    {
      blnStepVisible_6 = 1;
    }
    if (arrActiveSteps.ElementAt( 7 -1) == 1)
    {
      blnStepVisible_7 = 1;
    }
    if (arrActiveSteps.ElementAt( 8 -1) == 1)
    {
      blnStepVisible_8 = 1;
    }
    if (arrActiveSteps.ElementAt( 9 -1) == 1)
    {
      blnStepVisible_9 = 1;
    }
    if (arrActiveSteps.ElementAt( 10 -1) == 1)
    {
      blnStepVisible_10 = 1;
    }
    if (arrActiveSteps.ElementAt( 11 -1) == 1)
    {
      blnStepVisible_11 = 1;
    }
    if (arrActiveSteps.ElementAt( 12 -1) == 1)
    {
      blnStepVisible_12 = 1;
    }
    if (arrActiveSteps.ElementAt( 13 -1) == 1)
    {
      blnStepVisible_13 = 1;
    }
    if (arrActiveSteps.ElementAt( 14 -1) == 1)
    {
      blnStepVisible_14 = 1;
    }
    if (arrActiveSteps.ElementAt( 15 -1) == 1)
    {
      blnStepVisible_15 = 1;
    }
    if (arrActiveSteps.ElementAt( 16 -1) == 1)
    {
      blnStepVisible_16 = 1;
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "radioButton1.IsEnabled", blnStepVisible_1 );
    customDialog_2.SetCustomDialogProperty( "radioButton2.IsEnabled", blnStepVisible_2 );
    customDialog_2.SetCustomDialogProperty( "radioButton3.IsEnabled", blnStepVisible_3 );
    customDialog_2.SetCustomDialogProperty( "radioButton4.IsEnabled", blnStepVisible_4 );
    customDialog_2.SetCustomDialogProperty( "radioButton5.IsEnabled", blnStepVisible_5 );
    customDialog_2.SetCustomDialogProperty( "radioButton6.IsEnabled", blnStepVisible_6 );
    customDialog_2.SetCustomDialogProperty( "radioButton7.IsEnabled", blnStepVisible_7 );
    customDialog_2.SetCustomDialogProperty( "radioButton8.IsEnabled", blnStepVisible_8 );
    customDialog_2.SetCustomDialogProperty( "radioButton9.IsEnabled", blnStepVisible_9 );
    customDialog_2.SetCustomDialogProperty( "radioButton11.IsEnabled", blnStepVisible_11 );
    customDialog_2.SetCustomDialogProperty( "radioButton12.IsEnabled", blnStepVisible_12 );
    customDialog_2.SetCustomDialogProperty( "radioButton13.IsEnabled", blnStepVisible_13 );
    customDialog_2.SetCustomDialogProperty( "radioButton14.IsEnabled", blnStepVisible_14 );
    customDialog_2.SetCustomDialogProperty( "radioButton15.IsEnabled", blnStepVisible_15 );
    customDialog_2.SetCustomDialogProperty( "radioButton16.IsEnabled", blnStepVisible_16 );
    customDialog_2.SetCustomDialogProperty( "radioButton10.IsEnabled", blnStepVisible_10 );
    customDialog_2.ShowCustomDialog();
    rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    blnStartingStep_1 = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    blnStartingStep_2 = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
    blnStartingStep_3 = customDialog_2.GetCustomDialogProperty( "radioButton3.IsChecked" );
    blnStartingStep_4 = customDialog_2.GetCustomDialogProperty( "radioButton4.IsChecked" );
    blnStartingStep_5 = customDialog_2.GetCustomDialogProperty( "radioButton5.IsChecked" );
    blnStartingStep_6 = customDialog_2.GetCustomDialogProperty( "radioButton6.IsChecked" );
    blnStartingStep_7 = customDialog_2.GetCustomDialogProperty( "radioButton7.IsChecked" );
    blnStartingStep_8 = customDialog_2.GetCustomDialogProperty( "radioButton8.IsChecked" );
    blnStartingStep_9 = customDialog_2.GetCustomDialogProperty( "radioButton9.IsChecked" );
    blnStartingStep_11 = customDialog_2.GetCustomDialogProperty( "radioButton11.IsChecked" );
    blnStartingStep_12 = customDialog_2.GetCustomDialogProperty( "radioButton12.IsChecked" );
    blnStartingStep_13 = customDialog_2.GetCustomDialogProperty( "radioButton13.IsChecked" );
    blnStartingStep_14 = customDialog_2.GetCustomDialogProperty( "radioButton14.IsChecked" );
    blnStartingStep_15 = customDialog_2.GetCustomDialogProperty( "radioButton15.IsChecked" );
    blnStartingStep_16 = customDialog_2.GetCustomDialogProperty( "radioButton16.IsChecked" );
    blnStartingStep_10 = customDialog_2.GetCustomDialogProperty( "radioButton10.IsChecked" );
    if (rtnValue == 2)
    {
      abort;
    }
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfPossibleSteps;)
      {
        loopCounter3 = loopCounter3 + 1;
        if (blnStartingStep_1 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(1-1, 0);
        }
        if (blnStartingStep_2 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(2-1, 0);
        }
        if (blnStartingStep_3 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(3-1, 0);
        }
        if (blnStartingStep_4 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(4-1, 0);
        }
        if (blnStartingStep_5 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(5-1, 0);
        }
        if (blnStartingStep_6 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(6-1, 0);
        }
        if (blnStartingStep_7 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(7-1, 0);
        }
        if (blnStartingStep_8 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(8-1, 0);
        }
        if (blnStartingStep_9 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(9-1, 0);
        }
        if (blnStartingStep_10 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(10-1, 0);
        }
        if (blnStartingStep_11 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(11-1, 0);
        }
        if (blnStartingStep_12 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(12-1, 0);
        }
        if (blnStartingStep_13 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(13-1, 0);
        }
        if (blnStartingStep_14 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(14-1, 0);
        }
        if (blnStartingStep_15 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(15-1, 0);
        }
        if (blnStartingStep_16 == 1)
        {
          break;
        }
        else
        {
          arrActiveSteps.SetAt(16-1, 0);
        }
      }
    }
  }
  TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_RELEASE, Translate("Every Possible Step"), Translate("Performed?"), arrEveryStep, arrActiveSteps);
}

private function C_LoadInstructions(  ) void {
  private variable intTipsNeeded;
  private variable intSeqCap;
  private variable strLoadMessage;
  private variable rtnValue;
  private dialog customDialog_4;
  private variable _intTipsNeeded;
  private variable __[];
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                LOAD INSTRUCTIONS: START\n**************************************************************************************************************************"));
  intSeqCap = intSourcePlateNumber * 96;
  seqPCR_SourcePlates.SetCount(intSeqCap);
  seqDWP_BindPlates.SetCount(intSeqCap);
  seqDWP_BindPlates2.SetCount(intSeqCap);
  ML_STAR.PCR_DestinationPlates.SetCount(intSeqCap);
  ML_STAR.trp_BindPlates_Magnet.SetCount(intSourcePlateNumber);
  if (blnSourcePlateCleanup == 0)
  {
    if (intSourcePlateNumber == 1)
    {
      strLoadMessage = StrConcat4(Translate("Please load 1 source plate on the flashing position"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" source plates on the flashing positions"), Translate(""));
    }
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqPCR_SourcePlates, strLoadMessage);
  }
  if (blnSourcePlateCleanup == 1)
  {
    strLoadMessage = StrConcat4(Translate("Please load the DNA plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
  }
  else
  {
    if (intSourcePlateNumber == 1)
    {
      strLoadMessage = StrConcat4(Translate("Please load 1 bind plate on the flashing position"), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" bind plates on the flashing positions"), Translate(""));
    }
  }
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqDWP_BindPlates, strLoadMessage);
  if (intSourcePlateNumber == 1)
  {
    strLoadMessage = StrConcat4(Translate("Please load 1 destination plate on the flashing position"), Translate(""), Translate(""), Translate(""));
  }
  else
  {
    strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" destination plates on the flashing positions"), Translate(""));
  }
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.PCR_DestinationPlates, strLoadMessage);
  if (intSourcePlateNumber == 1)
  {
    strLoadMessage = StrConcat4(Translate("Please load 1 "), strPossibleLabware_Mag, Translate(" on the flashing position"), Translate(""));
  }
  else
  {
    strLoadMessage = StrConcat8(Translate("Please load "), intSourcePlateNumber, Translate(" "), strPossibleLabware_Mag, Translate(" on the flashing position"), Translate(""), Translate(""), Translate(""));
  }
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.trp_BindPlates_Magnet, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load 150mL ethanol (70%) on the flashing position"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Ethanol, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load 150mL elution buffer on the flashing position"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Elution, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load 90uL/well binding beads on the flashing position"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_BindingBeads, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load an empty waste reservoir"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqWaste, strLoadMessage);
  JSONSEARCH::GetJSONEntry(strConfigFilePath_Workflow, Translate("Processing_Details,intTipRequired"), 0, __, _intTipsNeeded);
  intTipsNeeded = intSourcePlateNumber * intTipsNeeded;
  NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate(""), intTipsNeeded, 300, 1, Translate("TipCounter_300uLNTR"));
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (rtnValue == 2)
  {
    abort;
  }
}

private function E_PipettingSteps(  ) void {
  private timer tmrDNABind_Plate1;
  private timer tmrDNABind_Plate2;
  private timer tmrDNAPulldown_Plate1;
  private timer tmrDNAPulldown_Plate2;
  private variable strHHSDevice;
  private variable blnUSB;
  private variable blnSTAR;
  private variable rtnCode;
  private variable arrHHSDevices[];
  private variable intHHSNumber;
  private variable loopCounter1;
  private variable arrTransportSettings[];
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter6;
  private variable loopCounter5;
  private timer tmrDrying_Plate1;
  private timer tmrDrying_Plate2;
  private variable loopCounter8;
  private variable loopCounter9;
  private variable blnToolEject;
  private timer tmrDNAElute_Plate1;
  private timer tmrDNAElute_Plate2;
  private variable loopCounter4;
  private variable loopCounter10;
  private variable blnCheckPlate;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                    PIPETTING STEPS: START\n**************************************************************************************************************************"));
  blnCheckPlate = 0;
  MECC::TraceComment(Translate("---------- HHS Module Init ----------"));
  intHHSNumber = SeqGetTotal(seqTrp_BindOnHHS);
  blnSTAR = 1;
  blnUSB = 1;
  arrHHSDevices.SetSize(0);
  HSLHamHeaterShaker::SetSimulation(blnSimMode);
  {
    for(loopCounter6 = 0; loopCounter6 < intHHSNumber;)
    {
      loopCounter6 = loopCounter6 + 1;
      strHHSDevice = StrConcat2(Translate("devHHS"), loopCounter6);
      if (blnSTAR == 1)
      {
        rtnCode = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, loopCounter6, strHHSDevice);
        if (rtnCode != 0)
        {
          MECC::TraceComment(Translate("Error Encountered"));
          blnSTAR = 0;
        }
      }
      if (blnUSB == 1)
      {
        rtnCode = HSLHamHeaterShaker::CreateUsbDevice(loopCounter6, strHHSDevice);
        if (rtnCode != 0)
        {
          MECC::TraceComment(Translate("Error Encountered"));
          blnUSB = 0;
        }
      }
      if (blnSTAR == 0)
      {
        if (blnUSB == 0)
        {
          break;
        }
      }
      arrHHSDevices.AddAsLast(strHHSDevice);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of HHS Connections"), arrHHSDevices);
  if (blnBindOnHHS == 1)
  {
    {
      for(loopCounter10 = 0; loopCounter10 < intHHSNumber;)
      {
        loopCounter10 = loopCounter10 + 1;
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter10 -1), intBind_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter10, Translate(" at "), intBind_Temp, Translate("C"), Translate(""));
      }
    }
  }
  MECC::TraceComment(Translate("=========================\n        Step 1-5. First Bind\n========================="));
  {
    for(loopCounter1 = 0; loopCounter1 < intSourcePlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter1, Translate("/"), intSourcePlateNumber);
      MECC::TraceComment(Translate("===== Step 1. Transfer Eluate ====="));
      if (arrActiveSteps.ElementAt( 1 -1) == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer eluate into source plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnTopUp_Eject == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Eject"), Translate(""));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 2. Transfer Beads ====="));
      if (arrActiveSteps.ElementAt( 2 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 1 -1) == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
        else
        {
          if (blnTopUp_Eject == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Pickup"), Translate(""));
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer beads into bind plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnBead_Eject == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Eject"), Translate(""));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 3. Transfer DNA ====="));
      if (arrActiveSteps.ElementAt( 3 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 2 -1) == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
        else
        {
          if (blnBead_Eject == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Pickup"), Translate(""));
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer DNA into bind plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 4. DNA Binding ====="));
      if (arrActiveSteps.ElementAt( 4 -1) == 1)
      {
        if (blnSourcePlateCleanup == 1)
        {
          _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (blnBindOnHHS == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Move bind plate to the HHS"), Translate(""));
          _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Shake);
        }
        if (loopCounter1 == 1)
        {
          if( 0 == tmrDNABind_Plate1.SetTimer(intDNABindTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter1 == 2)
          {
            if( 0 == tmrDNABind_Plate2.SetTimer(intDNABindTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Binding Timer' #"), loopCounter1, Translate(" for "), intDNABindTime, Translate(" seconds"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      SeqIncrement(seqTrp_BindPlates, 1);
      SeqIncrement(seqTrp_BindOnHHS, 1);
      SeqIncrement(seqPCR_SourcePlates, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
      SeqIncrement(ML_STAR.seqTemp, 96);
    }
  }
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqPCR_SourcePlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  if (blnBind2OnHHS == 1)
  {
    {
      for(loopCounter10 = 0; loopCounter10 < intHHSNumber;)
      {
        loopCounter10 = loopCounter10 + 1;
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter10 -1), intBind2_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter10, Translate(" at "), intBind2_Temp, Translate("C"), Translate(""));
      }
    }
  }
  MECC::TraceComment(Translate("===== Step 5. Bead Pulldown ====="));
  if (arrActiveSteps.ElementAt( 5 -1) == 1)
  {
    {
      for(loopCounter2 = 0; loopCounter2 < intSourcePlateNumber;)
      {
        loopCounter2 = loopCounter2 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter2, Translate("/"), intSourcePlateNumber);
        if (arrActiveSteps.ElementAt( 4 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #"), loopCounter2);
          if (loopCounter2 == 1)
          {
            if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter2 == 2)
            {
              if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Bind Timer #"), loopCounter2, Translate(" reached"), Translate(""));
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Move bind plate to the magnet"), Translate(""));
        _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
        if (blnBindOnHHS == 1)
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter2 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNAPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter2 == 2)
          {
            if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNAPulldownTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #"), loopCounter2);
        SeqIncrement(seqTrp_BindOnHHS, 1);
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnMagnet, 1);
      }
    }
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
    SeqResetSequenceIndexes(seqTrp_BindPlates);
    SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
  }
  MECC::TraceComment(Translate("=========================\n     Step 6-9. Second Bind\n========================="));
  {
    for(loopCounter8 = 0; loopCounter8 < intSourcePlateNumber;)
    {
      loopCounter8 = loopCounter8 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter8, Translate("/"), intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 6 Transfer Beads =========="));
      if (arrActiveSteps.ElementAt( 6 -1) == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer beads into second bind plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnBead2_Eject == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
        else
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Eject"), Translate(""));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 7 Transfer Supernatant =========="));
      if (arrActiveSteps.ElementAt( 7 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 5 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Pulldown Timer #"), loopCounter8);
          if (loopCounter8 == 1)
          {
            if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter8 == 2)
            {
              if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Pulldown Timer #"), loopCounter8, Translate(" reached"), Translate(""));
        }
        if (arrActiveSteps.ElementAt( 6 -1) == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
          NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        }
        else
        {
          if (blnBead2_Eject == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
          }
          else
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Pickup"), Translate(""));
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer supernatant into second bind plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 8 DNA Binding =========="));
      if (arrActiveSteps.ElementAt( 8 -1) == 1)
      {
        if (blnBind2OnHHS == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Move bind plate to the HHS"), Translate(""));
          _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter8 -1), intBind2_Shake);
        }
        if (loopCounter8 == 1)
        {
          if( 0 == tmrDNABind_Plate1.SetTimer(intDNABind2Time) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter8 == 2)
          {
            if( 0 == tmrDNABind_Plate2.SetTimer(intDNABind2Time) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Binding Timer' #"), loopCounter8, Translate(" for "), intDNABind2Time, Translate(" seconds"), Translate(""));
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      SeqIncrement(seqTrp_BindPlates2, 1);
      SeqIncrement(seqTrp_BindOnHHS, 1);
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      SeqIncrement(seqDWP_BindPlates2, 96);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
      SeqIncrement(seqTrp_BindPlates, 1);
    }
  }
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  SeqResetSequenceIndexes(seqTrp_BindPlates2);
  SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates2);
  SeqResetSequenceIndexes(seqDWP_BindOnMagnet);
  if (blnDryOnHHS == 1)
  {
    {
      for(loopCounter10 = 0; loopCounter10 < intHHSNumber;)
      {
        loopCounter10 = loopCounter10 + 1;
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter10 -1), intDry_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter10, Translate(" at "), intDry_Temp, Translate("C"), Translate(""));
      }
    }
  }
  MECC::TraceComment(Translate("========== Step 9 Second Bead Pulldown =========="));
  if (arrActiveSteps.ElementAt( 9 -1) == 1)
  {
    {
      for(loopCounter9 = 0; loopCounter9 < intSourcePlateNumber;)
      {
        loopCounter9 = loopCounter9 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter9, Translate("/"), intSourcePlateNumber);
        if (arrActiveSteps.ElementAt( 8 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #"), loopCounter9);
          if (loopCounter9 == 1)
          {
            if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter9 == 2)
            {
              if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Bind Timer #"), loopCounter9, Translate(" reached"), Translate(""));
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Move bind plate to the magnet"), Translate(""));
        _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
        if (blnBind2OnHHS == 1)
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter9 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter9 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter9 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNAPulldown2Time) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter9 == 2)
          {
            if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNAPulldown2Time) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #"), loopCounter9);
        SeqIncrement(seqTrp_BindOnHHS, 1);
        SeqIncrement(seqTrp_BindPlates2, 1);
        SeqIncrement(seqTrp_BindOnMagnet, 1);
      }
    }
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
    SeqResetSequenceIndexes(seqTrp_BindPlates2);
    SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
    SeqCopySequence(seqTrp_BindPlates, seqTrp_BindPlates2);
    SeqCopySequence(seqDWP_BindPlates, seqDWP_BindPlates2);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
  }
  MECC::TraceComment(Translate("=========================\n  Step 10-16. Wash & Elution\n========================="));
  {
    for(loopCounter3 = 0; loopCounter3 < intSourcePlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter3, Translate("/"), intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 10. Remove Supernatant =========="));
      if (arrActiveSteps.ElementAt( 10 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 9 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Pulldown Timer #"), loopCounter3);
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Pulldown Timer #"), loopCounter3, Translate(" reached"), Translate(""));
        }
        else
        {
          if (arrActiveSteps.ElementAt( 5 -1) == 1)
          {
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Pulldown Timer #"), loopCounter3);
            if (loopCounter3 == 1)
            {
              if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            else
            {
              if (loopCounter3 == 2)
              {
                if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
                {
                      MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
            TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Pulldown Timer #"), loopCounter3, Translate(" reached"), Translate(""));
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer supernatant to waste"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 11. Wash =========="));
      if (arrActiveSteps.ElementAt( 11 -1) == 1)
      {
        if (blnWashOnMagnet == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Wash bind plate on deck"), Translate(""));
          _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        {
          for(loopCounter5 = 0; loopCounter5 < intWashCycles;)
          {
            loopCounter5 = loopCounter5 + 1;
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
            NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer ethanol into bind plate"), Translate(""));
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer ethanol to waste"), Translate(""));
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
            ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 12. Drying =========="));
      if (arrActiveSteps.ElementAt( 12 -1) == 1)
      {
        {
          for(loopCounter4 = 0; loopCounter4 < 1;)
          {
            loopCounter4 = loopCounter4 + 1;
            _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
            if (blnWashOnMagnet == 1)
            {
              if (blnDryOnMagnet == 1)
              {
                break;
              }
            }
            if (blnWashOnMagnet == 0)
            {
              if (blnDryOnDeck == 1)
              {
                break;
              }
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer bind plate to drying location"), Translate(""));
            if (blnWashOnMagnet == 1)
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            else
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            if (blnDryOnDeck == 1)
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
            if (blnDryOnHHS == 1)
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
              HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter3 -1), 1);
            }
            if (blnDryOnMagnet == 1)
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
          }
        }
        if (loopCounter3 == 1)
        {
          if( 0 == tmrDrying_Plate1.SetTimer(intBeadDryingTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter3 == 2)
          {
            if( 0 == tmrDrying_Plate2.SetTimer(intBeadDryingTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #"), loopCounter3);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (blnEluteOnHHS == 1)
      {
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter3 -1), intElute_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter3, Translate(" at "), intElute_Temp, Translate("C"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 13. Transfer Eluate =========="));
      if (arrActiveSteps.ElementAt( 13 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 12 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #"), loopCounter3);
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDrying_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              if( 0 == tmrDrying_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Bind Timer #"), loopCounter2, Translate(" reached"), Translate(""));
        }
        {
          for(loopCounter4 = 0; loopCounter4 < 1;)
          {
            loopCounter4 = loopCounter4 + 1;
            _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
            if (blnDryOnDeck == 1)
            {
              if (blnEluateOnMagnet == 0)
              {
                break;
              }
            }
            if (blnDryOnDeck == 0)
            {
              if (blnEluateOnMagnet == 1)
              {
                break;
              }
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer bind plate to eluate location"), Translate(""));
            if (blnDryOnHHS == 1)
            {
              HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter3 -1), 0);
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            if (blnDryOnDeck == 1)
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            if (blnDryOnMagnet == 1)
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            if (blnEluateOnMagnet == 1)
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
            else
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Add eluate to bind plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        if (blnEluateOnMagnet == 1)
        {
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        else
        {
          if (blnSourcePlateCleanup == 1)
          {
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          }
          else
          {
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 14. Incubation =========="));
      if (arrActiveSteps.ElementAt( 14 -1) == 1)
      {
        {
          for(loopCounter4 = 0; loopCounter4 < 1;)
          {
            loopCounter4 = loopCounter4 + 1;
            _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
            if (blnEluateOnMagnet == 0)
            {
              if (blnEluteOnHHS == 0)
              {
                break;
              }
            }
            TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer bind plate to incubation location"), Translate(""));
            if (blnEluateOnMagnet == 1)
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            else
            {
              ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            }
            if (blnEluteOnHHS == 1)
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
            else
            {
              ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            }
          }
        }
        if (loopCounter3 == 1)
        {
          if( 0 == tmrDNAElute_Plate1.SetTimer(intDNAEluteTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter3 == 2)
          {
            if( 0 == tmrDNAElute_Plate2.SetTimer(intDNAEluteTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Elution Timer' #"), loopCounter3, Translate(" for "), intDNAEluteTime, Translate(" seconds"), Translate(""));
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 15. Bead Pulldown =========="));
      if (arrActiveSteps.ElementAt( 15 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 14 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Elute #"), loopCounter3);
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDNAElute_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter2 == 2)
            {
              if( 0 == tmrDNAElute_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Elute Timer #"), loopCounter3, Translate(" reached"), Translate(""));
        }
        _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer bind plate to magnet"), Translate(""));
        if (blnEluteOnHHS == 1)
        {
          HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter3 -1));
          HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter3 -1), 0);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter3 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBeadPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
          if (loopCounter3 == 2)
          {
            if( 0 == tmrDNAPulldown_Plate2.SetTimer(intBeadPulldownTime) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #"), loopCounter3);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 16. Recover DNA =========="));
      if (arrActiveSteps.ElementAt( 16 -1) == 1)
      {
        if (arrActiveSteps.ElementAt( 15 -1) == 1)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Pulldown Timer #"), loopCounter3);
          if (loopCounter3 == 1)
          {
            if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
          else
          {
            if (loopCounter3 == 2)
            {
              if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> DNA Pulldown Timer #"), loopCounter3, Translate(" reached"), Translate(""));
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
        NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, Translate("TipCounter_300uLNTR"), 300, 0, 1);
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Transfer eluate to destination plate"), Translate(""));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        MECC::TraceComment(Translate("----- Move to Home -----"));
        _GetLabwareParameters(strPossibleLabware_Bind, arrTransportSettings);
        if (loopCounter3 == intSourcePlateNumber)
        {
          blnToolEject = 1;
        }
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      SeqIncrement(seqWashPlate, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      SeqIncrement(seqPCR_DestinationPlates, 96);
      SeqIncrement(seqTrp_BindPlates, 1);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
      SeqIncrement(ML_STAR.DWP_BindPlates, 1);
    }
  }
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, 1, 300);
}

private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void {
  private variable __[];
  private variable strJSONSearch;
  private variable _strJSONPrefix;
  private variable intSimTimer;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Getting Pipeline Varibles: Start"), Translate(""));
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Labware_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Source_Plate_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Src);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bind_Plate_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Bind);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Destination_Plate_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Dest);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Bead_Plate_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Bead);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("EtOH_Reservoir_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_EtOH);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Elution_Reservoir_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Elu);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Magnet_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Mag);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("Waste_Reservoir_Type"));
  _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, arrPossibleLabware_Waste);
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Processing_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intMaxPlateThroughput"));
  intMaxPlateThroughput = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intMaxPlateThroughput: "), intMaxPlateThroughput);
  if (arrActiveSteps.ElementAt( 1 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step1_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUpVolume"));
    intTopUpVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUpVolume: "), intTopUpVolume);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_TopUp"));
    strLC_TopUp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strLC_TopUp: "), strLC_TopUp);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnTopUp_Eject"));
    blnTopUp_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnTopUp_Eject: "), blnTopUp_Eject);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspLLD"));
    intTopUp_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspLLD: "), intTopUp_AspLLD);
    if (intTopUp_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspSubmerge"));
      intTopUp_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspSubmerge: "), intTopUp_AspSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspHeight"));
      intTopUp_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspHeight: "), intTopUp_AspHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspRetract"));
      intTopUp_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspRetract: "), intTopUp_AspRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspFollowing"));
    intTopUp_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspFollowing: "), intTopUp_AspFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspMixCycles"));
    intTopUp_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspMixCycles: "), intTopUp_AspMixCycles);
    if (intTopUp_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspMixVolume"));
      intTopUp_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_AspMixVolume: "), intTopUp_AspMixVolume);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispLLD"));
    intTopUp_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispLLD: "), intTopUp_DispLLD);
    if (intTopUp_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispSubmerge"));
      intTopUp_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispSubmerge: "), intTopUp_DispSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispHeight"));
      intTopUp_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispHeight: "), intTopUp_DispHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispRetract"));
      intTopUp_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispRetract: "), intTopUp_DispRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispFollowing"));
    intTopUp_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispFollowing: "), intTopUp_DispFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispMixCycles"));
    intTopUp_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispMixCycles: "), intTopUp_DispMixCycles);
    if (intTopUp_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispMixVolume"));
      intTopUp_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intTopUp_DispMixVolume: "), intTopUp_DispMixVolume);
    }
  }
  if (arrActiveSteps.ElementAt( 2 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step2_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnSourcePlateCleanup"));
    blnSourcePlateCleanup = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnSourcePlateCleanup: "), blnSourcePlateCleanup);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadVolume"));
    intBeadVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBeadVolume: "), intBeadVolume);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strBeadType"));
    strBeadType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strBeadType: "), strBeadType);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Bead"));
    strLC_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strLC_Bead: "), strLC_Bead);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBead_Eject"));
    blnBead_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnBead_Eject: "), blnBead_Eject);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspLLD"));
    intBead_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspLLD: "), intBead_AspLLD);
    if (intBead_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspSubmerge"));
      intBead_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspSubmerge: "), intBead_AspSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspHeight"));
      intBead_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspHeight: "), intBead_AspHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspRetract"));
      intBead_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspRetract: "), intBead_AspRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspFollowing"));
    intBead_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspFollowing: "), intBead_AspFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspMixCycles"));
    intBead_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspMixCycles: "), intBead_AspMixCycles);
    if (intBead_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspMixVolume"));
      intBead_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_AspMixVolume: "), intBead_AspMixVolume);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispLLD"));
    intBead_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispLLD: "), intBead_DispLLD);
    if (intBead_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispSubmerge"));
      intBead_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispSubmerge: "), intBead_DispSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispHeight"));
      intBead_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispHeight: "), intBead_DispHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispRetract"));
      intBead_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispRetract: "), intBead_DispRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispFollowing"));
    intBead_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispFollowing: "), intBead_DispFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispMixCycles"));
    intBead_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispMixCycles: "), intBead_DispMixCycles);
    if (intBead_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispMixVolume"));
      intBead_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead_DispMixVolume: "), intBead_DispMixVolume);
    }
  }
  if (arrActiveSteps.ElementAt( 3 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step3_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAVolume"));
    intDNAVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNAVolume: "), intDNAVolume);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_DNA"));
    strLC_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strLC_DNA: "), strLC_DNA);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDNA_Eject"));
    blnDNA_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnDNA_Eject: "), blnDNA_Eject);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspLLD"));
    intDNA_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspLLD: "), intDNA_AspLLD);
    if (intDNA_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspSubmerge"));
      intDNA_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspSubmerge: "), intDNA_AspSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspHeight"));
      intDNA_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspHeight: "), intDNA_AspHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspRetract"));
      intDNA_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspRetract: "), intDNA_AspRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspFollowing"));
    intDNA_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspFollowing: "), intDNA_AspFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspMixCycles"));
    intDNA_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspMixCycles: "), intDNA_AspMixCycles);
    if (intDNA_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspMixVolume"));
      intDNA_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_AspMixVolume: "), intDNA_AspMixVolume);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispLLD"));
    intDNA_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispLLD: "), intDNA_DispLLD);
    if (intDNA_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispSubmerge"));
      intDNA_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispSubmerge: "), intDNA_DispSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispHeight"));
      intDNA_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispHeight: "), intDNA_DispHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispRetract"));
      intDNA_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispRetract: "), intDNA_DispRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispFollowing"));
    intDNA_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispFollowing: "), intDNA_DispFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispMixCycles"));
    intDNA_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispMixCycles: "), intDNA_DispMixCycles);
    if (intDNA_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispMixVolume"));
      intDNA_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNA_DispMixVolume: "), intDNA_DispMixVolume);
    }
  }
  if (arrActiveSteps.ElementAt( 4 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step4_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNABindTime"));
    intDNABindTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNABindTime: "), intDNABindTime);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBindOnHHS"));
    blnBindOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnBindOnHHS: "), blnBindOnHHS);
    if (blnBindOnHHS == 1)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind_Temp"));
      intBind_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBind_Temp: "), intBind_Temp);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind_Shake"));
      intBind_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBind_Shake: "), intBind_Shake);
    }
  }
  if (arrActiveSteps.ElementAt( 5 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step5_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAPulldownTime"));
    intDNAPulldownTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNAPulldownTime: "), intDNAPulldownTime);
  }
  if (arrActiveSteps.ElementAt( 6 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step6_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2Volume"));
    intBead2Volume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2Volume: "), intBead2Volume);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strBead2Type"));
    strBead2Type = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strBead2Type: "), strBead2Type);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Bead2"));
    strLC_Bead2 = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strLC_Bead2: "), strLC_Bead2);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBead2_Eject"));
    blnBead2_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnBead2_Eject: "), blnBead2_Eject);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspLLD"));
    intBead2_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspLLD: "), intBead2_AspLLD);
    if (intBead2_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspSubmerge"));
      intBead2_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspSubmerge: "), intBead2_AspSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspHeight"));
      intBead2_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspHeight: "), intBead2_AspHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspRetract"));
      intBead2_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspRetract: "), intBead2_AspRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspFollowing"));
    intBead2_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspFollowing: "), intBead2_AspFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspMixCycles"));
    intBead2_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspMixCycles: "), intBead2_AspMixCycles);
    if (intBead2_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_AspMixVolume"));
      intBead2_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_AspMixVolume: "), intBead2_AspMixVolume);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispLLD"));
    intBead2_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispLLD: "), intBead2_DispLLD);
    if (intBead2_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispSubmerge"));
      intBead2_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispSubmerge: "), intBead2_DispSubmerge);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispHeight"));
      intBead2_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispHeight: "), intBead2_DispHeight);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispRetract"));
      intBead2_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispRetract: "), intBead2_DispRetract);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispFollowing"));
    intBead2_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispFollowing: "), intBead2_DispFollowing);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispMixCycles"));
    intBead2_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispMixCycles: "), intBead2_DispMixCycles);
    if (intBead2_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead2_DispMixVolume"));
      intBead2_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBead2_DispMixVolume: "), intBead2_DispMixVolume);
    }
  }
  if (arrActiveSteps.ElementAt( 7 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step7_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTransVolume"));
    intSupTransVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_SupTrans"));
    strLC_SupTrans = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspLLD"));
    intSupTrans_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSupTrans_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspSubmerge"));
      intSupTrans_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspHeight"));
      intSupTrans_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspRetract"));
      intSupTrans_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspFollowing"));
    intSupTrans_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspMixCycles"));
    intSupTrans_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSupTrans_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_AspMixVolume"));
      intSupTrans_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispLLD"));
    intSupTrans_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSupTrans_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispSubmerge"));
      intSupTrans_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispHeight"));
      intSupTrans_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispRetract"));
      intSupTrans_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispFollowing"));
    intSupTrans_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispMixCycles"));
    intSupTrans_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSupTrans_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupTrans_DispMixVolume"));
      intSupTrans_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTransVolume: "), intSupTransVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strLC_SupTrans: "), strLC_SupTrans);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspLLD: "), intSupTrans_AspLLD);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspSubmerge: "), intSupTrans_AspSubmerge);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspHeight: "), intSupTrans_AspHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspRetract: "), intSupTrans_AspRetract);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspFollowing: "), intSupTrans_AspFollowing);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspMixCycles: "), intSupTrans_AspMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_AspMixVolume: "), intSupTrans_AspMixVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispLLD: "), intSupTrans_DispLLD);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispSubmerge: "), intSupTrans_DispSubmerge);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispHeight: "), intSupTrans_DispHeight);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispRetract: "), intSupTrans_DispRetract);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispFollowing: "), intSupTrans_DispFollowing);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispMixCycles: "), intSupTrans_DispMixCycles);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intSupTrans_DispMixVolume: "), intSupTrans_DispMixVolume);
  }
  if (arrActiveSteps.ElementAt( 8 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step8_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNABind2Time"));
    intDNABind2Time = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBind2OnHHS"));
    blnBind2OnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (blnBind2OnHHS == 1)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind2_Temp"));
      intBind2_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind2_Shake"));
      intBind2_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNABind2Time: "), intDNABind2Time);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- blnBind2OnHHS: "), blnBind2OnHHS);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBind2_Temp: "), intBind2_Temp);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intBind2_Shake: "), intBind2_Shake);
  }
  if (arrActiveSteps.ElementAt( 9 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step9_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAPulldown2Time"));
    intDNAPulldown2Time = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- intDNAPulldown2Time: "), intDNAPulldown2Time);
  }
  if (arrActiveSteps.ElementAt( 10 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step10_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupernatantVolume"));
    intSupernatantVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Sup"));
    strLC_Sup = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnRetainSupernatant"));
    blnRetainSupernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspLLD"));
    intSup_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSup_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspSubmerge"));
      intSup_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspHeight"));
      intSup_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspRetract"));
      intSup_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspFollowing"));
    intSup_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspMixCycles"));
    intSup_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSup_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspMixVolume"));
      intSup_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispLLD"));
    intSup_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSup_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispSubmerge"));
      intSup_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispHeight"));
      intSup_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispRetract"));
      intSup_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispFollowing"));
    intSup_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispMixCycles"));
    intSup_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intSup_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispMixVolume"));
      intSup_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  if (arrActiveSteps.ElementAt( 11 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step11_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnWashOnMagnet"));
    blnWashOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWashCycles"));
    intWashCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEthanolWashVolume"));
    intEthanolWashVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_EtOH"));
    strLC_EtOH = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspLLD"));
    intEtOH_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEtOH_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspSubmerge"));
      intEtOH_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspHeight"));
      intEtOH_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspRetract"));
      intEtOH_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspFollowing"));
    intEtOH_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspMixCycles"));
    intEtOH_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEtOH_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspMixVolume"));
      intEtOH_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispLLD"));
    intEtOH_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEtOH_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispSubmerge"));
      intEtOH_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispHeight"));
      intEtOH_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispRetract"));
      intEtOH_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispFollowing"));
    intEtOH_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispMixCycles"));
    intEtOH_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEtOH_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispMixVolume"));
      intEtOH_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEthanolRemovalVoume"));
    intEthanolRemovalVoume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Wash"));
    strLC_Wash = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspLLD"));
    intWash_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intWash_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspSubmerge"));
      intWash_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspHeight"));
      intWash_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspRetract"));
      intWash_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspFollowing"));
    intWash_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspMixCycles"));
    intWash_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intWash_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspMixVolume"));
      intWash_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispLLD"));
    intWash_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intWash_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispSubmerge"));
      intWash_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispHeight"));
      intWash_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispRetract"));
      intWash_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispFollowing"));
    intWash_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispMixCycles"));
    intWash_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intWash_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispMixVolume"));
      intWash_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  if (arrActiveSteps.ElementAt( 12 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step12_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadDryingTime"));
    intBeadDryingTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnHHS"));
    blnDryOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (blnDryOnHHS == 1)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDry_Temp"));
      intDry_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnDeck"));
    blnDryOnDeck = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnMagnet"));
    blnDryOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  if (arrActiveSteps.ElementAt( 13 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step13_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strEluateType"));
    strEluateType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluateVolume"));
    intEluateVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnEluateOnMagnet"));
    blnEluateOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Eluate"));
    strLC_Eluate = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspLLD"));
    intEluate_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEluate_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspSubmerge"));
      intEluate_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspHeight"));
      intEluate_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspRetract"));
      intEluate_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspFollowing"));
    intEluate_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspMixCycles"));
    intEluate_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEluate_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspMixVolume"));
      intEluate_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispLLD"));
    intEluate_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEluate_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispSubmerge"));
      intEluate_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispHeight"));
      intEluate_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispRetract"));
      intEluate_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispFollowing"));
    intEluate_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispMixCycles"));
    intEluate_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intEluate_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispMixVolume"));
      intEluate_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  if (arrActiveSteps.ElementAt( 14 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step14_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAEluteTime"));
    intDNAEluteTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnEluteOnHHS"));
    blnEluteOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (blnEluteOnHHS == 1)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intElute_Temp"));
      intElute_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intElute_Shake"));
      intElute_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  if (arrActiveSteps.ElementAt( 15 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step15_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadPulldownTime"));
    intBeadPulldownTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBeadPulldown"));
    blnBeadPulldown = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  if (arrActiveSteps.ElementAt( 16 -1) == 1)
  {
    _strJSONPrefix = StrConcat2(Translate(""), Translate("Step16_Details,"));
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnTipRinse"));
    blnTipRinse = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecoveryVolume"));
    intRecoveryVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Recovery"));
    strLC_Recovery = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspLLD"));
    intRecovery_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intRecovery_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspSubmerge"));
      intRecovery_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspHeight"));
      intRecovery_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspRetract"));
      intRecovery_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspFollowing"));
    intRecovery_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspMixCycles"));
    intRecovery_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intRecovery_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspMixVolume"));
      intRecovery_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispLLD"));
    intRecovery_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intRecovery_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispSubmerge"));
      intRecovery_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispHeight"));
      intRecovery_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispRetract"));
      intRecovery_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispFollowing"));
    intRecovery_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispMixCycles"));
    intRecovery_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intRecovery_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispMixVolume"));
      intRecovery_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  if (blnSimMode == 1)
  {
    intSimTimer = 5;
    intBeadDryingTime = intSimTimer;
    intBeadPulldownTime = intSimTimer;
    intDNABindTime = intSimTimer;
    intDNAEluteTime = intSimTimer;
    intDNAPulldownTime = intSimTimer;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("-- Getting Pipeline Varibles: End"), Translate(""));
}

private function B_CreateSequences(  ) void {
  private variable blnSingleSeqTrace;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                 SEQUENCE CREATION: START\n**************************************************************************************************************************"));
  SeqCopySequence(seqRes_BindingBeads, ML_STAR.res_Beads);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, arrOffsets_Bead.ElementAt( 1 -1), arrOffsets_Bead.ElementAt( 2 -1), arrOffsets_Bead.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqRes_WashBuffer, ML_STAR.res_Ethanol);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, arrOffsets_EtOH.ElementAt( 1 -1), arrOffsets_EtOH.ElementAt( 2 -1), arrOffsets_EtOH.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqRes_ElutionBuffer, ML_STAR.res_Elution);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, arrOffsets_Elu.ElementAt( 1 -1), arrOffsets_Elu.ElementAt( 2 -1), arrOffsets_Elu.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqWaste, ML_STAR.res_Waste);
  if (blnRetainSupernatant == 1)
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.core96externalwaste_0001);
  }
  else
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.res_Waste);
  }
  SeqCopySequence(seqPCR_SourcePlates, ML_STAR.PCR_SourcePlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, arrOffsets_Src.ElementAt( 1 -1), arrOffsets_Src.ElementAt( 2 -1), arrOffsets_Src.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  if (blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.PCR_SourcePlates);
  }
  else
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.DWP_BindPlates);
  }
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, arrOffsets_Bind.ElementAt( 1 -1), arrOffsets_Bind.ElementAt( 2 -1), arrOffsets_Bind.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqDWP_BindPlates2, ML_STAR.DWP_BindPlates2);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, arrOffsets_Bind.ElementAt( 1 -1), arrOffsets_Bind.ElementAt( 2 -1), arrOffsets_Bind.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqPCR_DestinationPlates, ML_STAR.PCR_DestinationPlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, arrOffsets_Dest.ElementAt( 1 -1), arrOffsets_Dest.ElementAt( 2 -1), arrOffsets_Dest.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.DWP_BindOnMagnet);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrOffsets_Mag.ElementAt( 1 -1), arrOffsets_Mag.ElementAt( 2 -1), arrOffsets_Mag.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrOffsets_Bind.ElementAt( 1 -1), arrOffsets_Bind.ElementAt( 2 -1), arrOffsets_Bind.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  if (blnWashOnMagnet == 1)
  {
    SeqCopySequence(seqWashPlate, ML_STAR.DWP_BindOnMagnet);
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrOffsets_Mag.ElementAt( 1 -1), arrOffsets_Mag.ElementAt( 2 -1), arrOffsets_Mag.ElementAt( 3 -1));
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrOffsets_Bind.ElementAt( 1 -1), arrOffsets_Bind.ElementAt( 2 -1), arrOffsets_Bind.ElementAt( 3 -1));
    VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWashPlate, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  }
  else
  {
    SeqCopySequence(seqWashPlate, seqDWP_BindPlates);
  }
  SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_BindPlates_Home);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindPlates, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindPlates2, ML_STAR.trp_BindPlates2_Home);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindPlates2, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_BindPlates_Magnet);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindOnMagnet, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_BindPlates_HHS);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqTrp_BindOnHHS, arrOffsets_Instrument.ElementAt( 1 -1), arrOffsets_Instrument.ElementAt( 2 -1), arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqTips, ML_STAR.NTR_Tips);
  blnSingleSeqTrace = 1;
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqPCR_SourcePlates, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqDWP_BindPlates, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqPCR_DestinationPlates, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqRes_BindingBeads, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqWashPlate, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqRes_WashBuffer, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqRes_ElutionBuffer, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqWaste, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqSupernatantWaste, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqDWP_BindPlates2, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqDWP_BindOnMagnet, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqTrp_BindPlates, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqTrp_BindPlates2, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqTrp_BindOnMagnet, blnSingleSeqTrace);
  TRACELEVEL::TraceSequencePositions(ML_STAR, TRACE_LEVEL_DEBUG, seqTrp_BindOnHHS, blnSingleSeqTrace);
}

private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable {
  private variable o_var;
  private variable _varType;
  private variable _intArrSize;
  o_arr.SetSize( 0);
  JSONSEARCH::GetJSONEntry(i_strFilePath, i_strSearch, 0, o_arr, o_var);
  _varType = StrGetType(o_var);
  if (i_blnForceCheck == 1)
  {
    if (_varType == "s")
    {
      if (o_var == "")
      {
        _intArrSize=o_arr.GetSize();
        if (_intArrSize == 0)
        {
          Trace("## Issue with _GetJSONValue");
          Trace("i_strFilePath: ", i_strFilePath);
          Trace("i_strSearch: ", i_strSearch);
          Trace("i_intTrace: ", i_intTrace);
          Trace("i_blnForceCheck: ", i_blnForceCheck);
          Trace("o_var: ", o_var);
          TRACELEVEL::TraceArray(TRACE_LEVEL_NONE, Translate(""), o_arr);
          abort;
        }
      }
    }
  }
  return (o_var);
}

private function _GetLabwareParameters( variable i_strLabware, variable & o_arr[] ) void {
  private variable _intZSpeed_Get;
  private variable _intGripSpeed;
  private variable _intGripWidthOpen;
  private variable _intZSpeed_Place;
  private variable _intGripForce;
  private variable _intPlatePress;
  private variable _intXAcceleration;
  private variable _intGripWidth;
  private variable _intGripHeight;
  private variable _strLabwareName;
  private variable _strJSONSearch;
  private variable _strLabwareAlias;
  private variable __[];
  o_arr.SetSize( 0);
  o_arr.SetSize(0);
  if(0){
    _intGripHeight = 4;
    _intGripWidth = 79;
    _intGripWidthOpen = 85;
    _intGripForce = 5;
    _intGripSpeed = 277.8;
    _intZSpeed_Get = 128.7;
    _intXAcceleration = 4;
    _intZSpeed_Place = 128.7;
    _intPlatePress = 1;
  }
  if(0){
    _strJSONSearch = StrConcat2(Translate("LabwareTypes,"), _strLabwareName);
    _strLabwareAlias = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 1, __);
  }
  _strLabwareAlias = Translate("Nunc 96-Well Polypropylene DeepWell - #260252");
  _strLabwareAlias = Translate("Eppendorf twin.tec PCR Plate 96 - #0030128648");
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripHeight"));
  _intGripHeight = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidth"));
  _intGripWidth = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidthOpen"));
  _intGripWidthOpen = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripForce"));
  _intGripForce = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripSpeed"));
  _intGripSpeed = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Get"));
  _intZSpeed_Get = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intXAcceleration"));
  _intXAcceleration = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Place"));
  _intZSpeed_Place = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intPlatePress"));
  _intPlatePress = _GetJSONValue(strConfigFilePath_General, _strJSONSearch, 0, 0, __);
  o_arr.AddAsLast(_intGripHeight);
  o_arr.AddAsLast(_intGripWidth);
  o_arr.AddAsLast(_intGripWidthOpen);
  o_arr.AddAsLast(_intGripForce);
  o_arr.AddAsLast(_intGripSpeed);
  o_arr.AddAsLast(_intZSpeed_Get);
  o_arr.AddAsLast(_intXAcceleration);
  o_arr.AddAsLast(_intZSpeed_Place);
  o_arr.AddAsLast(_intPlatePress);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), o_arr);
}

private function D_BarcodeScanning(  ) void {
}

private function _VersionHistory(  ) void {
}
