private function A_UserInput(  ) void ;
private function B_CreateSequences(  ) void ;
private function C_LoadInstructions(  ) void ;
private function D_BarcodeScanning(  ) void ;
private function E_PipettingSteps(  ) void ;
private function _GetJSONValue( variable i_strFilePath, variable i_strSearch_Prefix, variable i_strSearch_Suffix, variable i_blnTrace, variable i_blnForceCheck, variable & o_arr[] ) variable ;
private function _GetLabwareParameters( variable i_strLabware, variable & o_arr[] ) void ;
private function _GetPipelineVariables( variable i_strConfigPath ) void ;
private function _HHSSettings( variable i_dev, variable i_intTemp, variable i_intShake, variable i_blnRelease ) void ;
private function _TimerSettings( timer & io_tmr, variable i_intTime, variable i_strTmrName ) void ;
private function _TipEject( variable i_blnEject ) variable ;
private function _TipPickup( variable & _blnTips ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLHamHeaterShaker::Terminate();
}

private function A_UserInput(  ) void {
  private variable _strConfigFolderPath;
  private variable _strMethodFolderPath;
  private variable _intNumberOfAvailableWorkflows;
  private variable _strWorkflowsConfigFileName;
  private variable _strLabwareConfigFileName;
  private variable _;
  private variable _arrAvailableWorkflows[];
  private dialog customDialog_1;
  private variable _loopCounter1;
  private variable _intNumberOfPossibleSteps;
  private variable _rtnValue;
  private variable _intWorkflowIndex;
  private variable _arrWorkflowSteps[];
  private variable _arrPossibleSteps[];
  private variable _intIndex_Waste;
  private variable _intIndex_Bind;
  private variable _intIndex_Dest;
  private variable _blnBindVisible;
  private variable _intIndex_Elu;
  private variable _intIndex_Bead;
  private variable _intIndex_EtOH;
  private variable _intIndex_Mag;
  private variable _intIndex_Src;
  private variable _arrPossibleLabware[];
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable _blnStartingStep_13;
  private variable _blnStepVisible_8;
  private variable _blnStartingStep_14;
  private variable _blnStepVisible_9;
  private variable _blnStartingStep_15;
  private variable _blnStartingStep_16;
  private variable _blnStartingStep_1;
  private variable _blnStartingStep_2;
  private variable _blnStartingStep_3;
  private variable _blnStepVisible_10;
  private variable _blnStartingStep_4;
  private variable _blnStepVisible_11;
  private variable _blnStartingStep_5;
  private variable _loopCounter3;
  private variable _blnStepVisible_12;
  private variable _blnStepVisible_1;
  private variable _blnStartingStep_6;
  private variable _blnStepVisible_13;
  private variable _blnStepVisible_2;
  private variable _blnStartingStep_7;
  private variable _blnStepVisible_14;
  private variable _blnStepVisible_3;
  private variable _blnStartingStep_8;
  private variable _blnStepVisible_15;
  private variable _blnStepVisible_4;
  private variable _blnStartingStep_9;
  private variable _blnStartingStep_10;
  private variable _blnStepVisible_16;
  private variable _blnStepVisible_5;
  private variable _blnStartingStep_11;
  private variable _blnStepVisible_6;
  private variable _blnStartingStep_12;
  private variable _blnStepVisible_7;
  private variable _arrStartingSteps[];
  private variable _loopCounter2;
  private variable _blnAdvancedSettings;
  private variable _rtn;
  private variable _loopCounter4;
  private variable _int;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                     USER INPUT: START\n**************************************************************************************************************************"));
  o_intTraceLevel = TRACE_LEVEL_RELEASE;
  TRACELEVEL::SetTraceLevel(o_intTraceLevel);
  o_blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  _strLabwareConfigFileName = Translate("_LabwareConfig.json");
  _strWorkflowsConfigFileName = Translate("_ApprovedWorkflows.json");
  _strMethodFolderPath = GetMethodFolder(0);
  StrReplace(_strMethodFolderPath, Translate("Method\\"), Translate(""));
  _strConfigFolderPath = StrConcat2(_strMethodFolderPath, Translate(".config\\"));
  o_strConfigPath_Labware = StrConcat2(_strConfigFolderPath, _strLabwareConfigFileName);
  o_strConfigPath_Workflows = StrConcat2(_strConfigFolderPath, _strWorkflowsConfigFileName);
  _rtn = FileDirectoryLib::CheckIfFileExists(o_strConfigPath_Workflows);
  if (_rtn == 0)
  {
    MECC::TraceComment(Translate("Workflow Config file does not exist"));
    abort;
  }
  _rtn = FileDirectoryLib::CheckIfFileExists(o_strConfigPath_Labware);
  if (_rtn == 0)
  {
    MECC::TraceComment(Translate("Workflow Config file does not exist"));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strConfigPath_Labware: "), o_strConfigPath_Labware);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- _strConfigPath_Workflows: "), o_strConfigPath_Workflows);
  _arrAvailableWorkflows.SetSize(0);
  JSONSEARCH::GetJSONEntry(o_strConfigPath_Workflows, Translate("Approved Workflows"), 0, _arrAvailableWorkflows, _);
  _intNumberOfAvailableWorkflows=_arrAvailableWorkflows.GetSize();
  if (_intNumberOfAvailableWorkflows == 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## No approved workflows found"), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Please check config file: "), o_strConfigPath_Workflows);
    abort;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Approved Workflows"), _arrAvailableWorkflows);
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrAvailableWorkflows );
  customDialog_1.ShowCustomDialog();
  _rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  _intWorkflowIndex = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
  if (_rtnValue == 2)
  {
    abort;
  }
  o_strConfigPath_CurrentWorkflow = StrConcat4(_strConfigFolderPath, _arrAvailableWorkflows.ElementAt( _intWorkflowIndex -1), Translate(".json"), Translate(""));
  _rtn = FileDirectoryLib::CheckIfFileExists(o_strConfigPath_CurrentWorkflow);
  if (_rtn == 0)
  {
    MECC::TraceComment(Translate("Workflow Config file does not exist"));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Workflow step: "), _arrAvailableWorkflows.ElementAt( _intWorkflowIndex -1));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Workflow config filepath: "), o_strConfigPath_CurrentWorkflow);
  _arrWorkflowSteps.SetSize(0);
  _arrPossibleSteps.SetSize(0);
  o_arrBinaryCurrentWorkflow.SetSize(0);
  _GetJSONValue(o_strConfigPath_CurrentWorkflow, Translate("Steps To Run"), Translate(""), o_intTraceLevel, 1, _arrWorkflowSteps);
  _GetJSONValue(o_strConfigPath_Workflows, Translate("Every Step"), Translate(""), o_intTraceLevel, 1, _arrPossibleSteps);
  _intNumberOfPossibleSteps=_arrPossibleSteps.GetSize();
  {
    for(_loopCounter1 = 0; _loopCounter1 < _intNumberOfPossibleSteps;)
    {
      _loopCounter1 = _loopCounter1 + 1;
      if (_arrWorkflowSteps.ElementAt( _loopCounter1 -1) != "")
      {
        o_arrBinaryCurrentWorkflow.AddAsLast(1);
      }
      else
      {
        o_arrBinaryCurrentWorkflow.AddAsLast(0);
      }
    }
  }
  _GetPipelineVariables(o_strConfigPath_CurrentWorkflow);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(" Default Workflow"), _arrWorkflowSteps);
  _arrPossibleLabware.SetSize(0);
  _rtnValue = 2;
  _blnBindVisible = 1;
  _intIndex_Src = 1;
  _intIndex_Bind = 1;
  _intIndex_Dest = 1;
  _intIndex_Bead = 1;
  _intIndex_EtOH = 1;
  _intIndex_Elu = 1;
  _intIndex_Mag = 1;
  _intIndex_Waste = 1;
  JSONSEARCH::GetJSONEntry(o_strConfigPath_Labware, Translate("Possible Labware"), 0, _arrPossibleLabware, _);
  {
    _loopCounter2 = 0;
    while (1 == 1)
    {
      _loopCounter2 = _loopCounter2 + 1;
      if (_rtnValue == 1)
      {
        break;
      }
      o_strLabware_Src=o_arrPossibleLabware_Src.GetAt(_intIndex_Src-1);
      if (o_blnSourcePlateCleanup == 0)
      {
        o_strLabware_Bind=o_arrPossibleLabware_Bind.GetAt(_intIndex_Bind-1);
      }
      else
      {
        _blnBindVisible = 0;
        o_arrPossibleLabware_Bind.SetSize(0);
        o_arrPossibleLabware_Bind.AddAsLast(Translate("---"));
      }
      o_strLabware_Dest=o_arrPossibleLabware_Dest.GetAt(_intIndex_Dest-1);
      o_strLabware_Bead=o_arrPossibleLabware_Bead.GetAt(_intIndex_Bead-1);
      o_strLabware_EtOH=o_arrPossibleLabware_EtOH.GetAt(_intIndex_EtOH-1);
      o_strLabware_Elu=o_arrPossibleLabware_Elu.GetAt(_intIndex_Elu-1);
      o_strLabware_Mag=o_arrPossibleLabware_Mag.GetAt(_intIndex_Mag-1);
      o_strLabware_Waste=o_arrPossibleLabware_Waste.GetAt(_intIndex_Waste-1);
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Src.ItemsSource", o_arrPossibleLabware_Src );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Bind.ItemsSource", o_arrPossibleLabware_Bind );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Dest.ItemsSource", o_arrPossibleLabware_Dest );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Bead.ItemsSource", o_arrPossibleLabware_Bead );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_EtOH.ItemsSource", o_arrPossibleLabware_EtOH );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Mag.ItemsSource", o_arrPossibleLabware_Mag );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Elu.ItemsSource", o_arrPossibleLabware_Elu );
      customDialog_2.SetCustomDialogArrayProperty( "comboBox_Waste.ItemsSource", o_arrPossibleLabware_Waste );
      customDialog_2.SetCustomDialogProperty( "comboBox_Src.SelectedIndex", _intIndex_Src );
      customDialog_2.SetCustomDialogProperty( "comboBox_Bind.IsEnabled", _blnBindVisible );
      customDialog_2.SetCustomDialogProperty( "comboBox_Bind.SelectedIndex", _intIndex_Bind );
      customDialog_2.SetCustomDialogProperty( "comboBox_Dest.SelectedIndex", _intIndex_Dest );
      customDialog_2.SetCustomDialogProperty( "comboBox_Bead.SelectedIndex", _intIndex_Bead );
      customDialog_2.SetCustomDialogProperty( "comboBox_EtOH.SelectedIndex", _intIndex_EtOH );
      customDialog_2.SetCustomDialogProperty( "comboBox_Mag.SelectedIndex", _intIndex_Mag );
      customDialog_2.SetCustomDialogProperty( "comboBox_Elu.SelectedIndex", _intIndex_Elu );
      customDialog_2.SetCustomDialogProperty( "comboBox_Waste.SelectedIndex", _intIndex_Waste );
      customDialog_2.SetCustomDialogProperty( "image_Bead.Source", o_strLabware_Bead );
      customDialog_2.SetCustomDialogProperty( "image_EtOH.Source", o_strLabware_EtOH );
      customDialog_2.SetCustomDialogProperty( "image_Elu.Source", o_strLabware_Elu );
      customDialog_2.SetCustomDialogProperty( "image_Waste.Source", o_strLabware_Waste );
      customDialog_2.SetCustomDialogProperty( "image_Magnet.Source", o_strLabware_Mag );
      customDialog_2.SetCustomDialogProperty( "image_Dest.Source", o_strLabware_Dest );
      customDialog_2.SetCustomDialogProperty( "image_Bind.Source", o_strLabware_Bind );
      customDialog_2.SetCustomDialogProperty( "image_Bind.IsVisible", _blnBindVisible );
      customDialog_2.SetCustomDialogProperty( "image_Src.Source", o_strLabware_Src );
      customDialog_2.SetCustomDialogProperty( "numeric1.Value", o_intSourcePlateNumber );
      customDialog_2.SetCustomDialogProperty( "checkBox_AdvancedSettings.IsChecked", _blnAdvancedSettings );
      customDialog_2.ShowCustomDialog();
      _rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      _intIndex_Src = customDialog_2.GetCustomDialogProperty( "comboBox_Src.SelectedIndex" );
      _intIndex_Bind = customDialog_2.GetCustomDialogProperty( "comboBox_Bind.SelectedIndex" );
      _intIndex_Dest = customDialog_2.GetCustomDialogProperty( "comboBox_Dest.SelectedIndex" );
      _intIndex_Bead = customDialog_2.GetCustomDialogProperty( "comboBox_Bead.SelectedIndex" );
      _intIndex_EtOH = customDialog_2.GetCustomDialogProperty( "comboBox_EtOH.SelectedIndex" );
      _intIndex_Mag = customDialog_2.GetCustomDialogProperty( "comboBox_Mag.SelectedIndex" );
      _intIndex_Elu = customDialog_2.GetCustomDialogProperty( "comboBox_Elu.SelectedIndex" );
      _intIndex_Waste = customDialog_2.GetCustomDialogProperty( "comboBox_Waste.SelectedIndex" );
      o_intSourcePlateNumber = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
      _blnAdvancedSettings = customDialog_2.GetCustomDialogProperty( "checkBox_AdvancedSettings.IsChecked" );
      if (o_blnSourcePlateCleanup == 1)
      {
        o_strLabware_Bind = o_strLabware_Src;
      }
      if (_rtnValue == 2)
      {
        abort;
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Throughput: "), o_intSourcePlateNumber);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Advanced Steps: "), _blnAdvancedSettings);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Source Labware: "), o_strLabware_Src);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Bind Labware: "), o_strLabware_Bind);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Destination Labware: "), o_strLabware_Dest);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Bead Labware: "), o_strLabware_Bead);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Ethanol Labware: "), o_strLabware_EtOH);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Elution Labware: "), o_strLabware_Elu);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Magnet: "), o_strLabware_Mag);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Waste Labware: "), o_strLabware_Waste);
  if (_blnAdvancedSettings == 1)
  {
    _blnStepVisible_1=o_arrBinaryCurrentWorkflow.GetAt(1-1);
    _blnStepVisible_2=o_arrBinaryCurrentWorkflow.GetAt(2-1);
    _blnStepVisible_3=o_arrBinaryCurrentWorkflow.GetAt(3-1);
    _blnStepVisible_4=o_arrBinaryCurrentWorkflow.GetAt(4-1);
    _blnStepVisible_5=o_arrBinaryCurrentWorkflow.GetAt(5-1);
    _blnStepVisible_6=o_arrBinaryCurrentWorkflow.GetAt(6-1);
    _blnStepVisible_7=o_arrBinaryCurrentWorkflow.GetAt(7-1);
    _blnStepVisible_8=o_arrBinaryCurrentWorkflow.GetAt(8-1);
    _blnStepVisible_9=o_arrBinaryCurrentWorkflow.GetAt(9-1);
    _blnStepVisible_10=o_arrBinaryCurrentWorkflow.GetAt(10-1);
    _blnStepVisible_11=o_arrBinaryCurrentWorkflow.GetAt(11-1);
    _blnStepVisible_12=o_arrBinaryCurrentWorkflow.GetAt(12-1);
    _blnStepVisible_13=o_arrBinaryCurrentWorkflow.GetAt(13-1);
    _blnStepVisible_14=o_arrBinaryCurrentWorkflow.GetAt(14-1);
    _blnStepVisible_15=o_arrBinaryCurrentWorkflow.GetAt(15-1);
    _blnStepVisible_16=o_arrBinaryCurrentWorkflow.GetAt(16-1);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "radioButton1.IsEnabled", _blnStepVisible_1 );
    customDialog_3.SetCustomDialogProperty( "radioButton2.IsEnabled", _blnStepVisible_2 );
    customDialog_3.SetCustomDialogProperty( "radioButton3.IsEnabled", _blnStepVisible_3 );
    customDialog_3.SetCustomDialogProperty( "radioButton4.IsEnabled", _blnStepVisible_4 );
    customDialog_3.SetCustomDialogProperty( "radioButton5.IsEnabled", _blnStepVisible_5 );
    customDialog_3.SetCustomDialogProperty( "radioButton6.IsEnabled", _blnStepVisible_6 );
    customDialog_3.SetCustomDialogProperty( "radioButton7.IsEnabled", _blnStepVisible_7 );
    customDialog_3.SetCustomDialogProperty( "radioButton8.IsEnabled", _blnStepVisible_8 );
    customDialog_3.SetCustomDialogProperty( "radioButton9.IsEnabled", _blnStepVisible_9 );
    customDialog_3.SetCustomDialogProperty( "radioButton11.IsEnabled", _blnStepVisible_11 );
    customDialog_3.SetCustomDialogProperty( "radioButton12.IsEnabled", _blnStepVisible_12 );
    customDialog_3.SetCustomDialogProperty( "radioButton13.IsEnabled", _blnStepVisible_13 );
    customDialog_3.SetCustomDialogProperty( "radioButton14.IsEnabled", _blnStepVisible_14 );
    customDialog_3.SetCustomDialogProperty( "radioButton15.IsEnabled", _blnStepVisible_15 );
    customDialog_3.SetCustomDialogProperty( "radioButton16.IsEnabled", _blnStepVisible_16 );
    customDialog_3.SetCustomDialogProperty( "radioButton10.IsEnabled", _blnStepVisible_10 );
    customDialog_3.SetCustomDialogProperty( "numeric_SampleVol.Value", o_intDNAVolume );
    customDialog_3.SetCustomDialogProperty( "numeric_BeadVol.Value", o_intBeadVolume );
    customDialog_3.SetCustomDialogProperty( "numeric_EluVol.Value", o_intEluateVolume );
    customDialog_3.ShowCustomDialog();
    _rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    _blnStartingStep_1 = customDialog_3.GetCustomDialogProperty( "radioButton1.IsChecked" );
    _blnStartingStep_2 = customDialog_3.GetCustomDialogProperty( "radioButton2.IsChecked" );
    _blnStartingStep_3 = customDialog_3.GetCustomDialogProperty( "radioButton3.IsChecked" );
    _blnStartingStep_4 = customDialog_3.GetCustomDialogProperty( "radioButton4.IsChecked" );
    _blnStartingStep_5 = customDialog_3.GetCustomDialogProperty( "radioButton5.IsChecked" );
    _blnStartingStep_6 = customDialog_3.GetCustomDialogProperty( "radioButton6.IsChecked" );
    _blnStartingStep_7 = customDialog_3.GetCustomDialogProperty( "radioButton7.IsChecked" );
    _blnStartingStep_8 = customDialog_3.GetCustomDialogProperty( "radioButton8.IsChecked" );
    _blnStartingStep_9 = customDialog_3.GetCustomDialogProperty( "radioButton9.IsChecked" );
    _blnStartingStep_11 = customDialog_3.GetCustomDialogProperty( "radioButton11.IsChecked" );
    _blnStartingStep_12 = customDialog_3.GetCustomDialogProperty( "radioButton12.IsChecked" );
    _blnStartingStep_13 = customDialog_3.GetCustomDialogProperty( "radioButton13.IsChecked" );
    _blnStartingStep_14 = customDialog_3.GetCustomDialogProperty( "radioButton14.IsChecked" );
    _blnStartingStep_15 = customDialog_3.GetCustomDialogProperty( "radioButton15.IsChecked" );
    _blnStartingStep_16 = customDialog_3.GetCustomDialogProperty( "radioButton16.IsChecked" );
    _blnStartingStep_10 = customDialog_3.GetCustomDialogProperty( "radioButton10.IsChecked" );
    o_intDNAVolume = customDialog_3.GetCustomDialogProperty( "numeric_SampleVol.Value" );
    o_intBeadVolume = customDialog_3.GetCustomDialogProperty( "numeric_BeadVol.Value" );
    o_intEluateVolume = customDialog_3.GetCustomDialogProperty( "numeric_EluVol.Value" );
    if (_rtnValue == 2)
    {
      abort;
    }
    _arrStartingSteps.SetSize(0);
    _arrStartingSteps.AddAsLast(_blnStartingStep_1);
    _arrStartingSteps.AddAsLast(_blnStartingStep_2);
    _arrStartingSteps.AddAsLast(_blnStartingStep_3);
    _arrStartingSteps.AddAsLast(_blnStartingStep_4);
    _arrStartingSteps.AddAsLast(_blnStartingStep_5);
    _arrStartingSteps.AddAsLast(_blnStartingStep_6);
    _arrStartingSteps.AddAsLast(_blnStartingStep_7);
    _arrStartingSteps.AddAsLast(_blnStartingStep_8);
    _arrStartingSteps.AddAsLast(_blnStartingStep_9);
    _arrStartingSteps.AddAsLast(_blnStartingStep_10);
    _arrStartingSteps.AddAsLast(_blnStartingStep_11);
    _arrStartingSteps.AddAsLast(_blnStartingStep_12);
    _arrStartingSteps.AddAsLast(_blnStartingStep_13);
    _arrStartingSteps.AddAsLast(_blnStartingStep_14);
    _arrStartingSteps.AddAsLast(_blnStartingStep_15);
    _arrStartingSteps.AddAsLast(_blnStartingStep_16);
    {
      for(_loopCounter3 = 0; _loopCounter3 < _intNumberOfPossibleSteps;)
      {
        _loopCounter3 = _loopCounter3 + 1;
        if (_arrStartingSteps.ElementAt( _loopCounter3 -1) == 1)
        {
          break;
        }
        else
        {
          o_arrBinaryCurrentWorkflow.SetAt(_loopCounter3-1, 0);
        }
      }
    }
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Potential change to Bead Vol: "), o_intBeadVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Potential change to Sample Vol: "), o_intDNAVolume);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Potential change to Elution Vol: "), o_intEluateVolume);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Steps to Run: "), Translate(""));
  _int = 1;
  {
    for(_loopCounter4 = 0; _loopCounter4 < _intNumberOfPossibleSteps;)
    {
      _loopCounter4 = _loopCounter4 + 1;
      if (o_arrBinaryCurrentWorkflow.ElementAt( _loopCounter4 -1) == 1)
      {
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> ["), _int, Translate("] "), _arrPossibleSteps.ElementAt( _loopCounter4 -1));
        _int = _int + 1;
      }
    }
  }
}

private function C_LoadInstructions(  ) void {
  private dialog customDialog_4;
  private variable _rtn;
  private variable _intSeqCap;
  private variable _strLoadMessage;
  private variable _strBeadMessage;
  private variable _intTipsNeeded;
  private variable _arrLoadedCarriers[];
  private variable __[];
  private variable _intTipRacksNeeded;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                LOAD INSTRUCTIONS: START\n**************************************************************************************************************************"));
  _intSeqCap = o_intSourcePlateNumber * 96;
  seqPCR_SourcePlates.SetCount(_intSeqCap);
  seqDWP_BindPlates.SetCount(_intSeqCap);
  seqDWP_BindPlates2.SetCount(_intSeqCap);
  seqPCR_DestinationPlates.SetCount(_intSeqCap);
  seqTrp_BindOnMagnet.SetCount(o_intSourcePlateNumber);
  if (o_blnSimMode == 0)
  {
    _strLoadMessage = StrConcat4(Translate("Please load "), o_intSourcePlateNumber, Translate(" source plate(s) on the flashing location(s)."), Translate(""));
    if (o_blnSourcePlateCleanup == 0)
    {
      LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqPCR_SourcePlates, _strLoadMessage);
      _strLoadMessage = StrConcat4(Translate("Please load "), o_intSourcePlateNumber, Translate(" bind plate(s) on the flashing location(s)."), Translate(""));
    }
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqDWP_BindPlates, _strLoadMessage);
    _strLoadMessage = StrConcat4(Translate("Please load "), o_intSourcePlateNumber, Translate(" destination plate(s) on the flashing location(s)."), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqPCR_DestinationPlates, _strLoadMessage);
    _strLoadMessage = StrConcat8(Translate("Please load "), o_intSourcePlateNumber, Translate(" '"), o_strLabware_Mag, Translate("' magnet(s) on the flashing location(s)."), Translate(""), Translate(""), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqTrp_BindOnMagnet, _strLoadMessage);
    _strLoadMessage = StrConcat4(Translate("Please load 200mL ethanol (70%) on the flashing position"), Translate(""), Translate(""), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_WashBuffer, _strLoadMessage);
    _strLoadMessage = StrConcat4(Translate("Please load 100mL elution buffer on the flashing position"), Translate(""), Translate(""), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_ElutionBuffer, _strLoadMessage);
    if (o_intSourcePlateNumber == 1)
    {
      _strBeadMessage = Translate("90");
    }
    else
    {
      _strBeadMessage = Translate("150");
    }
    _strLoadMessage = StrConcat4(Translate("Please load "), _strBeadMessage, Translate("uL/well binding beads on the flashing position"), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_BindingBeads, _strLoadMessage);
    _strLoadMessage = StrConcat4(Translate("Please load an empty waste reservoir"), Translate(""), Translate(" on the flashing position"), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqWaste, _strLoadMessage);
    JSONSEARCH::GetJSONEntry(o_strConfigPath_CurrentWorkflow, Translate("Processing_Details,intTipRacksRequired"), 0, __, _intTipRacksNeeded);
    _intTipsNeeded = o_intSourcePlateNumber * _intTipRacksNeeded * 96;
    NTRDIRECTUSE_WGSPCRXP::load_GUI(ML_STAR, seqTips, seqTipRacks, seqWasteRacks, Translate(""), _intTipsNeeded, 300, 1, o_strTipCounter);
    _arrLoadedCarriers.SetSize(0);
    _arrLoadedCarriers.AddAsLast(Translate("MFX_CAR_5NTR4_0001"));
    _arrLoadedCarriers.AddAsLast(Translate("MFX_CAR_5NTR4_0002"));
    _arrLoadedCarriers.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
    _arrLoadedCarriers.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0002"));
    _arrLoadedCarriers.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0003"));
    CHECKCARRIERPRESENCEABSENCE::CheckCarriers(ML_STAR, _arrLoadedCarriers);
  }
  else
  {
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqPCR_SourcePlates, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqDWP_BindPlates, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqPCR_DestinationPlates, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqTrp_BindOnMagnet, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqRes_WashBuffer, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqRes_ElutionBuffer, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqRes_BindingBeads, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqWaste, 5, Translate(""));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seqTips, 5, Translate(""));
  }
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  _rtn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (_rtn == 2)
  {
    abort;
  }
}

private function E_PipettingSteps(  ) void {
  private variable intHHS;
  private variable intCOREChannel;
  private variable intHHSNumber;
  private variable arrHHSDevices[];
  private variable strHHSDevice;
  private variable loopCounter6;
  private variable rtnCode;
  private variable loopCounter1;
  private variable arrTransportSettings[];
  private timer tmrDNABind_Plate1;
  private timer tmrDNABind_Plate2;
  private variable loopCounter2;
  private timer tmrDNAPulldown_Plate1;
  private timer tmrDNAPulldown_Plate2;
  private variable loopCounter8;
  private variable loopCounter9;
  private variable loopCounter3;
  private timer tmrDNABind2_Plate1;
  private timer tmrDNABind2_Plate2;
  private variable loopCounter5;
  private variable blnCheckTimer;
  private timer tmrEthanolDelay;
  private timer tmrDrying_Plate1;
  private timer tmrDrying_Plate2;
  private timer tmrDNAElute_Plate1;
  private timer tmrDNAElute_Plate2;
  private variable _blnGripEject;
  private variable _blnTips;
  private variable _strSrcLabware;
  private variable _strDestLabware;
  private sequence _seqDestination;
  private sequence _seqSource;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                    PIPETTING STEPS: START\n**************************************************************************************************************************"));
  intHHS = 1;
  intCOREChannel = DevGetCfgValueWithKey(ML_STAR, 1);
  _GetLabwareParameters(o_strLabware_Bind, arrTransportSettings);
  arrHHSDevices.SetSize(0);
  intHHSNumber = SeqGetTotal(seqTrp_BindOnHHS);
  HSLHamHeaterShaker::SetSimulation(o_blnSimMode);
  {
    for(loopCounter6 = 0; loopCounter6 < intHHSNumber;)
    {
      loopCounter6 = loopCounter6 + 1;
      strHHSDevice = StrConcat2(Translate("devHHS_"), loopCounter6);
      if (intHHSNumber <= 2)
      {
        rtnCode = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, loopCounter6, strHHSDevice);
      }
      else
      {
        rtnCode = HSLHamHeaterShaker::CreateUsbDevice(loopCounter6, strHHSDevice);
      }
      if (rtnCode != 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Could not connect to HHS. "), Translate("Method will abort"));
        abort;
      }
      arrHHSDevices.AddAsLast(strHHSDevice);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate("Array of HHS Connections"), arrHHSDevices);
  MECC::TraceComment(Translate("=========================\n        Step 1-5. First Bind\n========================="));
  {
    for(loopCounter1 = 0; loopCounter1 < o_intSourcePlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter1, Translate("/"), o_intSourcePlateNumber);
      if (o_blnBindOnHHS == 1)
      {
        _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), o_intBind_Temp, 0, 0);
      }
      MECC::TraceComment(Translate("===== Step 1. Transfer Eluate ====="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 1 -1) == 1)
      {
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(o_blnTopUp_Eject);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 2. Transfer Beads ====="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 2 -1) == 1)
      {
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(o_blnBead_Eject);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 3. Transfer DNA ====="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 3 -1) == 1)
      {
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(1);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("===== Step 4. DNA Binding ====="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 4 -1) == 1)
      {
        if (o_blnBindOnHHS == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, o_intBind_Shake, 0);
        }
        if (loopCounter1 == 1)
        {
          _TimerSettings(tmrDNABind_Plate1, o_intDNABindTime, Translate("Bind Plate #1"));
        }
        if (loopCounter1 == 2)
        {
          _TimerSettings(tmrDNABind_Plate2, o_intDNABindTime, Translate("Bind Plate #2"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (intHHS < loopCounter1)
      {
        intHHS = intHHS + 1;
      }
      SeqIncrement(seqTrp_BindPlates, 1);
      SeqIncrement(seqPCR_SourcePlates, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> End of Step 1-4 Loop - "), Translate("Resetting sequences"), Translate(""), Translate(""));
  intHHS = 1;
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqPCR_SourcePlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  {
    for(loopCounter2 = 0; loopCounter2 < o_intSourcePlateNumber;)
    {
      loopCounter2 = loopCounter2 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter2, Translate("/"), o_intSourcePlateNumber);
      MECC::TraceComment(Translate("===== Step 5. Bead Pulldown ====="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 5 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 4 -1) == 1)
        {
          if (loopCounter2 == 1)
          {
            _TimerSettings(tmrDNABind_Plate1, 0, Translate("Bind Plate #1"));
          }
          if (loopCounter2 == 2)
          {
            _TimerSettings(tmrDNABind_Plate2, 0, Translate("Bind Plate #2"));
          }
        }
        if (o_blnBindOnHHS == 1)
        {
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, 0, 1);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter2 == 1)
        {
          _TimerSettings(tmrDNAPulldown_Plate1, o_intDNAPulldownTime, Translate("Bind Pulldown #1"));
        }
        if (loopCounter2 == 2)
        {
          _TimerSettings(tmrDNAPulldown_Plate2, o_intDNAPulldownTime, Translate("Bind Pulldown #2"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (o_blnBind2OnHHS == 1)
      {
        _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), o_intBind2_Temp, 0, 0);
      }
      if (intHHS < loopCounter2)
      {
        intHHS = intHHS + 1;
      }
      SeqIncrement(seqTrp_BindOnMagnet, 1);
      SeqIncrement(seqTrp_BindPlates, 1);
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> End of Step 5 Loop - "), Translate("Resetting sequences"), Translate(""), Translate(""));
  intHHS = 1;
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  MECC::TraceComment(Translate("=========================\n     Step 6-9. Second Bind\n========================="));
  {
    for(loopCounter8 = 0; loopCounter8 < o_intSourcePlateNumber;)
    {
      loopCounter8 = loopCounter8 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter8, Translate("/"), o_intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 6 Transfer Beads =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 6 -1) == 1)
      {
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(o_blnBead2_Eject);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 7 Transfer Supernatant =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 7 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 5 -1) == 1)
        {
          if (loopCounter8 == 1)
          {
            _TimerSettings(tmrDNAPulldown_Plate1, 0, Translate("Bind Pulldown #1"));
          }
          if (loopCounter8 == 2)
          {
            _TimerSettings(tmrDNAPulldown_Plate2, 0, Translate("Bind Pulldown #2"));
          }
        }
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(1);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 8 DNA Binding =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 8 -1) == 1)
      {
        if (o_blnBind2OnHHS == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, o_intBind2_Shake, 0);
        }
        if (loopCounter8 == 1)
        {
          _TimerSettings(tmrDNABind2_Plate1, o_intDNABind2Time, Translate("Bind Plate #1"));
        }
        if (loopCounter8 == 2)
        {
          _TimerSettings(tmrDNABind2_Plate2, o_intDNABind2Time, Translate("Bind Plate #2"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (intHHS < loopCounter8)
      {
        intHHS = intHHS + 1;
      }
      SeqIncrement(seqTrp_BindPlates2, 1);
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      SeqIncrement(seqDWP_BindPlates2, 96);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
      SeqIncrement(seqTrp_BindPlates, 1);
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> End of Step 6-8 Loop - "), Translate("Resetting sequences"), Translate(""), Translate(""));
  intHHS = 1;
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  SeqResetSequenceIndexes(seqTrp_BindPlates2);
  SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates2);
  SeqResetSequenceIndexes(seqDWP_BindOnMagnet);
  {
    for(loopCounter9 = 0; loopCounter9 < o_intSourcePlateNumber;)
    {
      loopCounter9 = loopCounter9 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter9, Translate("/"), o_intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 9 Second Bead Pulldown =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 9 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 8 -1) == 1)
        {
          if (loopCounter9 == 1)
          {
            _TimerSettings(tmrDNABind2_Plate1, 0, Translate("Bind Plate #1"));
          }
          if (loopCounter9 == 2)
          {
            _TimerSettings(tmrDNABind2_Plate2, 0, Translate("Bind Plate #2"));
          }
        }
        if (o_blnBind2OnHHS == 1)
        {
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, 0, 1);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter9 == 1)
        {
          _TimerSettings(tmrDNAPulldown_Plate1, o_intDNAPulldown2Time, Translate("Bind Pulldown #1"));
        }
        if (loopCounter9 == 2)
        {
          _TimerSettings(tmrDNAPulldown_Plate2, o_intDNAPulldown2Time, Translate("Bind Pulldown #1"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (o_blnDryOnHHS == 1)
      {
        _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), o_intDry_Temp, 0, 0);
      }
      if (intHHS < loopCounter9)
      {
        intHHS = intHHS + 1;
      }
      SeqIncrement(seqTrp_BindPlates2, 1);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
    }
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> End of Step 9 Loop - "), Translate("Resetting sequences"), Translate(""), Translate(""));
  intHHS = 1;
  SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  SeqResetSequenceIndexes(seqTrp_BindPlates2);
  SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  if (o_arrBinaryCurrentWorkflow.ElementAt( 9 -1) == 1)
  {
    SeqCopySequence(seqTrp_BindPlates, seqTrp_BindPlates2);
    SeqCopySequence(seqDWP_BindPlates, seqDWP_BindPlates2);
  }
  MECC::TraceComment(Translate("=========================\n  Step 10-16. Wash & Elution\n========================="));
  {
    for(loopCounter3 = 0; loopCounter3 < o_intSourcePlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Loop "), loopCounter3, Translate("/"), o_intSourcePlateNumber);
      MECC::TraceComment(Translate("========== Step 10. Remove Supernatant =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 10 -1) == 1)
      {
        blnCheckTimer = 0;
        if (o_arrBinaryCurrentWorkflow.ElementAt( 9 -1) == 1)
        {
          blnCheckTimer = 1;
        }
        if (o_arrBinaryCurrentWorkflow.ElementAt( 5 -1) == 1)
        {
          blnCheckTimer = 1;
        }
        if (blnCheckTimer == 1)
        {
          if (loopCounter3 == 1)
          {
            _TimerSettings(tmrDNAPulldown_Plate1, 0, Translate("Bind Pulldown #1"));
          }
          if (loopCounter3 == 2)
          {
            _TimerSettings(tmrDNAPulldown_Plate2, 0, Translate("Bind Pulldown #2"));
          }
        }
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(1);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 11. Wash =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 11 -1) == 1)
      {
        if (o_blnWashOnMagnet == 0)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Wash bind plate on deck"), Translate(""));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        {
          for(loopCounter5 = 0; loopCounter5 < o_intWashCycles;)
          {
            loopCounter5 = loopCounter5 + 1;
            _TipPickup(_blnTips);
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            _TimerSettings(tmrEthanolDelay, 30, Translate("Ethanol Wash Time"));
            _TimerSettings(tmrEthanolDelay, 0, Translate("Ethanol Wash Time"));
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            _blnTips = _TipEject(1);
          }
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 12. Drying =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 12 -1) == 1)
      {
        if (o_blnWashOnMagnet == 1)
        {
          SeqCopySequence(_seqSource, seqTrp_BindOnMagnet);
        }
        else
        {
          SeqCopySequence(_seqSource, seqTrp_BindPlates);
        }
        if (o_blnDryOnDeck == 1)
        {
          SeqCopySequence(_seqDestination, seqTrp_BindPlates);
        }
        else
        {
          if (o_blnDryOnHHS == 1)
          {
            SeqCopySequence(_seqDestination, seqTrp_BindOnHHS);
          }
          else
          {
            SeqCopySequence(_seqDestination, seqTrp_BindOnMagnet);
          }
        }
        _strSrcLabware = SeqGetLabwareId(_seqSource);
        _strDestLabware = SeqGetLabwareId(_seqDestination);
        if (_strSrcLabware != _strDestLabware)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (loopCounter3 == 1)
        {
          _TimerSettings(tmrDrying_Plate1, o_intBeadDryingTime, Translate("Drying Plate #1"));
        }
        if (loopCounter3 == 2)
        {
          _TimerSettings(tmrDrying_Plate2, o_intBeadDryingTime, Translate("Drying Plate #2"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 13. Transfer Eluate =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 13 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 12 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            _TimerSettings(tmrDrying_Plate1, 0, Translate("Drying Plate #1"));
          }
          if (loopCounter3 == 2)
          {
            _TimerSettings(tmrDrying_Plate2, 0, Translate("Drying Plate #2"));
          }
        }
        if (o_blnDryOnHHS == 1)
        {
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, 0, 1);
          SeqCopySequence(_seqSource, seqTrp_BindOnHHS);
        }
        else
        {
          if (o_blnDryOnDeck == 1)
          {
            SeqCopySequence(_seqSource, seqTrp_BindPlates);
          }
          else
          {
            SeqCopySequence(_seqSource, seqTrp_BindOnMagnet);
          }
        }
        if (o_blnEluateOnMagnet == 1)
        {
          SeqCopySequence(_seqDestination, seqTrp_BindOnMagnet);
        }
        else
        {
          SeqCopySequence(_seqDestination, seqTrp_BindPlates);
        }
        _strSrcLabware = SeqGetLabwareId(_seqSource);
        _strDestLabware = SeqGetLabwareId(_seqDestination);
        if (_strSrcLabware != _strDestLabware)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        if (o_blnEluateOnMagnet == 1)
        {
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        else
        {
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        }
        _blnTips = _TipEject(1);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (o_blnEluteOnHHS == 1)
      {
        _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), o_intElute_Temp, 0, 0);
      }
      MECC::TraceComment(Translate("========== Step 14. Incubation =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 14 -1) == 1)
      {
        if (o_blnEluateOnMagnet == 1)
        {
          SeqCopySequence(_seqSource, seqTrp_BindOnMagnet);
        }
        else
        {
          SeqCopySequence(_seqSource, seqTrp_BindPlates);
        }
        if (o_blnEluteOnHHS == 1)
        {
          SeqCopySequence(_seqDestination, seqTrp_BindOnHHS);
        }
        else
        {
          SeqCopySequence(_seqDestination, seqTrp_BindPlates);
        }
        _strSrcLabware = SeqGetLabwareId(_seqSource);
        _strDestLabware = SeqGetLabwareId(_seqDestination);
        if (_strSrcLabware != _strDestLabware)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          if (o_blnEluteOnHHS == 1)
          {
            _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, o_intElute_Shake, 0);
          }
        }
        if (loopCounter3 == 1)
        {
          _TimerSettings(tmrDNAElute_Plate1, o_intDNAEluteTime, Translate("Elute Plate #1"));
        }
        if (loopCounter3 == 2)
        {
          _TimerSettings(tmrDNAElute_Plate2, o_intDNAEluteTime, Translate("Elute Plate #2"));
        }
        NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, 1, 300);
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 15. Bead Pulldown =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 15 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 14 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            _TimerSettings(tmrDNAElute_Plate1, 0, Translate("Elute Plate #1"));
          }
          if (loopCounter3 == 2)
          {
            _TimerSettings(tmrDNAElute_Plate2, 0, Translate("Elute Plate #2"));
          }
        }
        if (o_blnEluteOnHHS == 1)
        {
          _HHSSettings(arrHHSDevices.ElementAt( intHHS -1), 0, 0, 1);
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if (loopCounter3 == 1)
        {
          _TimerSettings(tmrDNAPulldown_Plate1, o_intBeadPulldownTime, Translate("Bead Pulldown #1"));
        }
        if (loopCounter3 == 2)
        {
          _TimerSettings(tmrDNAPulldown_Plate2, o_intBeadPulldownTime, Translate("Bead Pulldown #2"));
        }
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      MECC::TraceComment(Translate("========== Step 16. Recover DNA =========="));
      if (o_arrBinaryCurrentWorkflow.ElementAt( 16 -1) == 1)
      {
        if (o_arrBinaryCurrentWorkflow.ElementAt( 15 -1) == 1)
        {
          if (loopCounter3 == 1)
          {
            _TimerSettings(tmrDNAPulldown_Plate1, 0, Translate("Bead Pulldown #1"));
          }
          if (loopCounter3 == 2)
          {
            _TimerSettings(tmrDNAPulldown_Plate2, 0, Translate("Bead Pulldown #2"));
          }
        }
        _TipPickup(_blnTips);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        _blnTips = _TipEject(1);
        MECC::TraceComment(Translate("----- Move to Home -----"));
        _blnGripEject = 0;
        if (o_intSourcePlateNumber == loopCounter3)
        {
          _blnGripEject = 1;
        }
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Step not performed"), Translate(""));
      }
      if (intHHS < loopCounter3)
      {
        intHHS = intHHS + 1;
      }
      SeqIncrement(seqWashPlate, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      SeqIncrement(seqPCR_DestinationPlates, 96);
      SeqIncrement(seqTrp_BindPlates, 1);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
    }
  }
  NTRDIRECTUSE_WGSPCRXP::discard_empty_racks(ML_STAR, ML_STAR.NTR_Tips, ML_STAR.NTR_TipRacks, ML_STAR.NTR_WasteTipRacks, 1, 300);
}

private function _GetPipelineVariables( variable i_strConfigPath ) void {
  private variable _strJSONPrefix;
  private variable __[];
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-------------------------------"), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Getting Pipeline Varibles: Start"), Translate(""));
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Labware_Details,"));
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Source_Plate_Type"), 0, 1, o_arrPossibleLabware_Src);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Bind_Plate_Type"), 0, 0, o_arrPossibleLabware_Bind);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Destination_Plate_Type"), 0, 1, o_arrPossibleLabware_Dest);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Bead_Plate_Type"), 0, 1, o_arrPossibleLabware_Bead);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("EtOH_Reservoir_Type"), 0, 1, o_arrPossibleLabware_EtOH);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Elution_Reservoir_Type"), 0, 1, o_arrPossibleLabware_Elu);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Magnet_Type"), 0, 1, o_arrPossibleLabware_Mag);
  _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("Waste_Reservoir_Type"), 0, 1, o_arrPossibleLabware_Waste);
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Processing_Details,"));
  o_intTipRacksRequired = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTipRacksRequired"), 0, 1, __);
  o_strTipCounter = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strTipCounter"), 0, 1, __);
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step1_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 1 -1) == 1)
  {
    o_intTopUpVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUpVolume"), 0, 1, __);
    o_strLC_TopUp = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_TopUp"), 0, 1, __);
    o_blnTopUp_Eject = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnTopUp_Eject"), 0, 0, __);
    onerror goto errLabel_5 ;
    err.Clear();
    o_intTopUp_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspLLD"), 0, 1, __);
    o_intTopUp_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspSubmerge"), 0, 1, __);
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intTopUp_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspHeight"), 0, 1, __);
      o_intTopUp_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intTopUp_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspFollowing"), 0, 0, __);
    onerror goto errLabel_6 ;
    err.Clear();
    o_intTopUp_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspMixCycles"), 0, 1, __);
    o_intTopUp_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_AspMixVolume"), 0, 1, __);
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_7 ;
    err.Clear();
    o_intTopUp_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispLLD"), 0, 1, __);
    o_intTopUp_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispSubmerge"), 0, 1, __);
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intTopUp_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispHeight"), 0, 1, __);
      o_intTopUp_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intTopUp_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispFollowing"), 0, 0, __);
    onerror goto errLabel_8 ;
    err.Clear();
    o_intTopUp_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispMixCycles"), 0, 1, __);
    o_intTopUp_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intTopUp_DispMixVolume"), 0, 1, __);
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step2_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 2 -1) == 1)
  {
    o_blnSourcePlateCleanup = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnSourcePlateCleanup"), 0, 0, __);
    o_intBeadVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBeadVolume"), 0, 1, __);
    o_strLC_Bead = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Bead"), 0, 1, __);
    o_blnBead_Eject = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBead_Eject"), 0, 0, __);
    onerror goto errLabel_9 ;
    err.Clear();
    o_intBead_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspLLD"), 0, 1, __);
    o_intBead_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspSubmerge"), 0, 1, __);
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intBead_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspHeight"), 0, 1, __);
      o_intBead_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intBead_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspFollowing"), 0, 0, __);
    onerror goto errLabel_10 ;
    err.Clear();
    o_intBead_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspMixCycles"), 0, 1, __);
    o_intBead_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_AspMixVolume"), 0, 1, __);
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_11 ;
    err.Clear();
    o_intBead_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispLLD"), 0, 1, __);
    o_intBead_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispSubmerge"), 0, 1, __);
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intBead_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispHeight"), 0, 1, __);
      o_intBead_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intBead_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispFollowing"), 0, 0, __);
    onerror goto errLabel_12 ;
    err.Clear();
    o_intBead_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispMixCycles"), 0, 1, __);
    o_intBead_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead_DispMixVolume"), 0, 1, __);
    errLabel_12 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step3_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 3 -1) == 1)
  {
    o_intDNAVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNAVolume"), 0, 1, __);
    o_strLC_DNA = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_DNA"), 0, 1, __);
    o_blnDNA_Eject = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDNA_Eject"), 0, 0, __);
    onerror goto errLabel_13 ;
    err.Clear();
    o_intDNA_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspLLD"), 0, 1, __);
    o_intDNA_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspSubmerge"), 0, 1, __);
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intDNA_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspHeight"), 0, 1, __);
      o_intDNA_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intDNA_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspFollowing"), 0, 0, __);
    onerror goto errLabel_14 ;
    err.Clear();
    o_intDNA_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspMixCycles"), 0, 1, __);
    o_intDNA_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_AspMixVolume"), 0, 1, __);
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_15 ;
    err.Clear();
    o_intDNA_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispLLD"), 0, 1, __);
    o_intDNA_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispSubmerge"), 0, 1, __);
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intDNA_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispHeight"), 0, 1, __);
      o_intDNA_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intDNA_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispFollowing"), 0, 0, __);
    onerror goto errLabel_16 ;
    err.Clear();
    o_intDNA_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispMixCycles"), 0, 1, __);
    o_intDNA_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNA_DispMixVolume"), 0, 1, __);
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step4_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 4 -1) == 1)
  {
    o_intDNABindTime = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNABindTime"), 0, 1, __);
    onerror goto errLabel_17 ;
    err.Clear();
    o_blnBindOnHHS = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBindOnHHS"), 0, 1, __);
    o_intBind_Temp = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBind_Temp"), 0, 1, __);
    o_intBind_Shake = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBind_Shake"), 0, 1, __);
    errLabel_17 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_blnBind_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBind_CheckPlate"), 0, 0, __);
    o_blnBind_PlatePress = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBind_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step5_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 5 -1) == 1)
  {
    o_intDNAPulldownTime = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNAPulldownTime"), 0, 1, __);
    o_blnPulldown_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnPulldown_CheckPlate"), 0, 0, __);
    o_blnPulldown_PlatePress = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnPulldown_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step6_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 6 -1) == 1)
  {
    o_intBead2Volume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2Volume"), 0, 1, __);
    o_strLC_Bead2 = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Bead2"), 0, 1, __);
    o_blnBead2_Eject = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBead2_Eject"), 0, 0, __);
    onerror goto errLabel_18 ;
    err.Clear();
    o_intBead2_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspLLD"), 0, 1, __);
    o_intBead2_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspSubmerge"), 0, 1, __);
    errLabel_18 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intBead2_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspHeight"), 0, 1, __);
      o_intBead2_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intBead2_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspFollowing"), 0, 0, __);
    onerror goto errLabel_19 ;
    err.Clear();
    o_intBead2_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspMixCycles"), 0, 1, __);
    o_intBead2_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_AspMixVolume"), 0, 1, __);
    errLabel_19 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_20 ;
    err.Clear();
    o_intBead2_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispLLD"), 0, 1, __);
    o_intBead2_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispSubmerge"), 0, 1, __);
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intBead2_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispHeight"), 0, 1, __);
      o_intBead2_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intBead2_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispFollowing"), 0, 0, __);
    onerror goto errLabel_21 ;
    err.Clear();
    o_intBead2_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispMixCycles"), 0, 1, __);
    o_intBead2_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBead2_DispMixVolume"), 0, 1, __);
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step7_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 7 -1) == 1)
  {
    o_intSupTransVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTransVolume"), 0, 1, __);
    o_strLC_SupTrans = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_SupTrans"), 0, 1, __);
    o_blnSupTrans_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnSupTrans_CheckPlate"), 0, 0, __);
    o_blnSupTrans_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnSupTrans_PressPlate"), 0, 0, __);
    onerror goto errLabel_22 ;
    err.Clear();
    o_intSupTrans_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspLLD"), 0, 1, __);
    o_intSupTrans_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspSubmerge"), 0, 1, __);
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intSupTrans_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspHeight"), 0, 1, __);
      o_intSupTrans_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intSupTrans_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspFollowing"), 0, 0, __);
    onerror goto errLabel_23 ;
    err.Clear();
    o_intSupTrans_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspMixCycles"), 0, 1, __);
    o_intSupTrans_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_AspMixVolume"), 0, 1, __);
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_24 ;
    err.Clear();
    o_intSupTrans_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispLLD"), 0, 1, __);
    o_intSupTrans_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispSubmerge"), 0, 1, __);
    errLabel_24 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intSupTrans_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispHeight"), 0, 1, __);
      o_intSupTrans_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intSupTrans_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispFollowing"), 0, 0, __);
    onerror goto errLabel_25 ;
    err.Clear();
    o_intSupTrans_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispMixCycles"), 0, 1, __);
    o_intSupTrans_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupTrans_DispMixVolume"), 0, 1, __);
    errLabel_25 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step8_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 8 -1) == 1)
  {
    o_intDNABind2Time = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNABind2Time"), 0, 1, __);
    onerror goto errLabel_26 ;
    err.Clear();
    o_blnBind2OnHHS = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBind2OnHHS"), 0, 1, __);
    o_intBind2_Temp = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBind2_Temp"), 0, 1, __);
    o_intBind2_Shake = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBind2_Shake"), 0, 1, __);
    errLabel_26 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_blnBind2_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBind2_CheckPlate"), 0, 0, __);
    o_blnBind2_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBind2_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step9_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 9 -1) == 1)
  {
    o_intDNAPulldown2Time = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNAPulldown2Time"), 0, 1, __);
    o_blnPulldown2_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnPulldown2_CheckPlate"), 0, 0, __);
    o_blnPulldown2_PlatePress = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnPulldown2_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step10_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 10 -1) == 1)
  {
    o_intSupernatantVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSupernatantVolume"), 0, 1, __);
    o_strLC_Sup = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Sup"), 0, 1, __);
    o_blnRetainSupernatant = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnRetainSupernatant"), 0, 0, __);
    onerror goto errLabel_27 ;
    err.Clear();
    o_intSup_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspLLD"), 0, 1, __);
    o_intSup_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspSubmerge"), 0, 1, __);
    errLabel_27 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intSup_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspHeight"), 0, 1, __);
      o_intSup_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intSup_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspFollowing"), 0, 0, __);
    onerror goto errLabel_28 ;
    err.Clear();
    o_intSup_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspMixCycles"), 0, 1, __);
    o_intSup_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_AspMixVolume"), 0, 1, __);
    errLabel_28 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_29 ;
    err.Clear();
    o_intSup_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispLLD"), 0, 1, __);
    o_intSup_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispSubmerge"), 0, 1, __);
    errLabel_29 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intSup_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispHeight"), 0, 1, __);
      o_intSup_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intSup_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispFollowing"), 0, 0, __);
    onerror goto errLabel_30 ;
    err.Clear();
    o_intSup_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispMixCycles"), 0, 1, __);
    o_intSup_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intSup_DispMixVolume"), 0, 1, __);
    errLabel_30 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step11_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 11 -1) == 1)
  {
    o_blnWashOnMagnet = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnWashOnMagnet"), 0, 1, __);
    o_intWashCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWashCycles"), 0, 1, __);
    o_blnEtOH_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEtOH_CheckPlate"), 0, 0, __);
    o_blnEtOH_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEtOH_PlatePress"), 0, 0, __);
    o_intEthanolWashVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEthanolWashVolume"), 0, 1, __);
    o_strLC_EtOH = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_EtOH"), 0, 1, __);
    onerror goto errLabel_31 ;
    err.Clear();
    o_intEtOH_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspLLD"), 0, 1, __);
    o_intEtOH_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspSubmerge"), 0, 1, __);
    errLabel_31 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intEtOH_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspHeight"), 0, 1, __);
      o_intEtOH_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intEtOH_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspFollowing"), 0, 0, __);
    onerror goto errLabel_32 ;
    err.Clear();
    o_intEtOH_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspMixCycles"), 0, 1, __);
    o_intEtOH_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_AspMixVolume"), 0, 1, __);
    errLabel_32 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_33 ;
    err.Clear();
    o_intEtOH_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispLLD"), 0, 1, __);
    o_intEtOH_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispSubmerge"), 0, 1, __);
    errLabel_33 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intEtOH_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispHeight"), 0, 1, __);
      o_intEtOH_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intEtOH_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispFollowing"), 0, 0, __);
    onerror goto errLabel_34 ;
    err.Clear();
    o_intEtOH_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispMixCycles"), 0, 1, __);
    o_intEtOH_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEtOH_DispMixVolume"), 0, 1, __);
    errLabel_34 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_intEthanolRemovalVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEthanolRemovalVolume"), 0, 1, __);
    o_strLC_Wash = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Wash"), 0, 1, __);
    onerror goto errLabel_35 ;
    err.Clear();
    o_intWash_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspLLD"), 0, 1, __);
    o_intWash_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspSubmerge"), 0, 1, __);
    errLabel_35 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intWash_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspHeight"), 0, 1, __);
      o_intWash_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intWash_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspFollowing"), 0, 0, __);
    onerror goto errLabel_36 ;
    err.Clear();
    o_intWash_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspMixCycles"), 0, 1, __);
    o_intWash_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_AspMixVolume"), 0, 1, __);
    errLabel_36 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_37 ;
    err.Clear();
    o_intWash_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispLLD"), 0, 1, __);
    o_intWash_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispSubmerge"), 0, 1, __);
    errLabel_37 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intWash_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispHeight"), 0, 1, __);
      o_intWash_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intWash_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispFollowing"), 0, 0, __);
    onerror goto errLabel_38 ;
    err.Clear();
    o_intWash_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispMixCycles"), 0, 1, __);
    o_intWash_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intWash_DispMixVolume"), 0, 1, __);
    errLabel_38 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step12_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 12 -1) == 1)
  {
    o_intBeadDryingTime = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBeadDryingTime"), 0, 1, __);
    onerror goto errLabel_39 ;
    err.Clear();
    o_blnDryOnHHS = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDryOnHHS"), 0, 0, __);
    o_intDry_Temp = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDry_Temp"), 0, 1, __);
    o_blnDryOnDeck = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDryOnDeck"), 0, 0, __);
    o_blnDryOnMagnet = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDryOnMagnet"), 0, 0, __);
    errLabel_39 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_blnDry_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDrying_CheckPlate"), 0, 0, __);
    o_intDry_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDrying_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step13_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 13 -1) == 1)
  {
    o_strEluateType = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strEluateType"), 0, 0, __);
    o_intEluateVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluateVolume"), 0, 1, __);
    o_blnEluateOnMagnet = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEluateOnMagnet"), 0, 0, __);
    o_strLC_Eluate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Eluate"), 0, 1, __);
    o_blnEluate_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEluate_CheckPlate"), 0, 0, __);
    o_blnEluate_PlatePress = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEluate_PlatePress"), 0, 0, __);
    onerror goto errLabel_40 ;
    err.Clear();
    o_intEluate_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspLLD"), 0, 1, __);
    o_intEluate_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspSubmerge"), 0, 1, __);
    errLabel_40 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intEluate_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspHeight"), 0, 1, __);
      o_intEluate_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intEluate_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspFollowing"), 0, 0, __);
    onerror goto errLabel_41 ;
    err.Clear();
    o_intEluate_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspMixCycles"), 0, 1, __);
    o_intEluate_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_AspMixVolume"), 0, 1, __);
    errLabel_41 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_42 ;
    err.Clear();
    o_intEluate_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispLLD"), 0, 1, __);
    o_intEluate_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispSubmerge"), 0, 1, __);
    errLabel_42 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intEluate_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispHeight"), 0, 1, __);
      o_intEluate_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intEluate_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispFollowing"), 0, 0, __);
    onerror goto errLabel_43 ;
    err.Clear();
    o_intEluate_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispMixCycles"), 0, 1, __);
    o_intEluate_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intEluate_DispMixVolume"), 0, 1, __);
    errLabel_43 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step14_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 14 -1) == 1)
  {
    o_intDNAEluteTime = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intDNAEluteTime"), 0, 1, __);
    onerror goto errLabel_44 ;
    err.Clear();
    o_blnEluteOnHHS = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnEluteOnHHS"), 0, 0, __);
    if (o_blnEluteOnHHS == 1)
    {
      o_intElute_Temp = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intElute_Temp"), 0, 1, __);
      o_intElute_Shake = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intElute_Shake"), 0, 1, __);
    }
    errLabel_44 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_blnEluate_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnElute_CheckPlate"), 0, 0, __);
    o_blnElute_PlatePress = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnElute_PlatePress"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step15_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 15 -1) == 1)
  {
    o_intBeadPulldownTime = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intBeadPulldownTime"), 0, 1, __);
    o_blnBeadPulldown = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnBeadPulldown"), 0, 0, __);
    onerror goto errLabel_45 ;
    err.Clear();
    errLabel_45 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_blnDNAPulldown_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDNAPulldown_CheckPlate"), 0, 0, __);
    o_blnDNAPulldown_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnDNAPulldown_PressPlate"), 0, 0, __);
  }
  _strJSONPrefix = StrConcat2(Translate(""), Translate("Step16_Details,"));
  if (o_arrBinaryCurrentWorkflow.ElementAt( 16 -1) == 1)
  {
    o_blnTipRinse = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnTipRinse"), 0, 0, __);
    o_intRecoveryVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecoveryVolume"), 0, 1, __);
    o_strLC_Recovery = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("strLC_Recovery"), 0, 1, __);
    o_blnRecovery_CheckPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnRecovery_CheckPlate"), 0, 0, __);
    o_blnRecovery_PressPlate = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("blnRecovery_PressPlate"), 0, 0, __);
    onerror goto errLabel_46 ;
    err.Clear();
    o_intRecovery_AspLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspLLD"), 0, 1, __);
    o_intRecovery_AspSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspSubmerge"), 0, 1, __);
    errLabel_46 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intRecovery_AspHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspHeight"), 0, 1, __);
      o_intRecovery_AspRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intRecovery_AspFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspFollowing"), 0, 0, __);
    onerror goto errLabel_47 ;
    err.Clear();
    o_intRecovery_AspMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspMixCycles"), 0, 1, __);
    o_intRecovery_AspMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_AspMixVolume"), 0, 1, __);
    errLabel_47 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    onerror goto errLabel_48 ;
    err.Clear();
    o_intRecovery_DispLLD = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispLLD"), 0, 1, __);
    o_intRecovery_DispSubmerge = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispSubmerge"), 0, 1, __);
    errLabel_48 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_intRecovery_DispHeight = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispHeight"), 0, 1, __);
      o_intRecovery_DispRetract = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispRetract"), 0, 1, __);
    }   /* end if from skip handler if no error */
    o_intRecovery_DispFollowing = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispFollowing"), 0, 0, __);
    onerror goto errLabel_49 ;
    err.Clear();
    o_intRecovery_DispMixCycles = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispMixCycles"), 0, 1, __);
    o_intRecovery_DispMixVolume = _GetJSONValue(i_strConfigPath, _strJSONPrefix, Translate("intRecovery_DispMixVolume"), 0, 1, __);
    errLabel_49 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Getting Pipeline Varibles: End"), Translate(""));
}

private function B_CreateSequences(  ) void {
  private variable _;
  private variable _strJsonSearch;
  private variable _strSN;
  private variable _arrOffsets_Instrument[];
  private variable _arrOffset_Dest[];
  private variable _arrOffset_Bead[];
  private variable _arrOffset_EtOH[];
  private variable _arrOffset_Elu[];
  private variable _arrOffset_Bind[];
  private variable _arrOffset_Mag[];
  private variable _arrOffset_Src[];
  private variable _strJSONSearch;
  private variable _arrOffset_Waste[];
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                 SEQUENCE CREATION: START\n**************************************************************************************************************************"));
  _strSN = GetSN(ML_STAR, 0);
  _strJsonSearch = StrConcat4(Translate("Instrument_SN,"), _strSN, Translate(",offsets"), Translate(""));
  JSONSEARCH::GetJSONEntry(o_strConfigPath_Labware, _strJsonSearch, o_intTraceLevel, _arrOffsets_Instrument, _);
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Instrument Offset ("), _strSN, Translate(") - "), Translate(""), Translate("X: "), _arrOffsets_Instrument.ElementAt( 1 -1), Translate(", Y: "), _arrOffsets_Instrument.ElementAt( 2 -1), Translate(", Z: "), _arrOffsets_Instrument.ElementAt( 3 -1));
  SeqCopySequence(seqRes_BindingBeads, ML_STAR.res_Beads);
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Bead, Translate(",offsets"), 0, 1, _arrOffset_Bead);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, _arrOffset_Bead.ElementAt( 1 -1), _arrOffset_Bead.ElementAt( 2 -1), _arrOffset_Bead.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_BindingBeads, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Bead Reservoir ("), o_strLabware_Bead, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Bead.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Bead.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Bead.ElementAt( 3 -1));
  SeqCopySequence(seqRes_WashBuffer, ML_STAR.res_Ethanol);
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_EtOH, Translate(",offsets"), 0, 1, _arrOffset_EtOH);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, _arrOffset_EtOH.ElementAt( 1 -1), _arrOffset_EtOH.ElementAt( 2 -1), _arrOffset_EtOH.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_WashBuffer, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Ethanol Reservoir ("), o_strLabware_EtOH, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_EtOH.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_EtOH.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_EtOH.ElementAt( 3 -1));
  SeqCopySequence(seqRes_ElutionBuffer, ML_STAR.res_Elution);
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Elu, Translate(",offsets"), 0, 1, _arrOffset_Elu);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, _arrOffset_Elu.ElementAt( 1 -1), _arrOffset_Elu.ElementAt( 2 -1), _arrOffset_Elu.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqRes_ElutionBuffer, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Elution Reservoir ("), o_strLabware_Elu, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Elu.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Elu.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Elu.ElementAt( 3 -1));
  SeqCopySequence(seqWaste, ML_STAR.res_Waste);
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Waste, Translate(",offsets"), 0, 1, _arrOffset_Waste);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWaste, _arrOffset_Waste.ElementAt( 1 -1), _arrOffset_Waste.ElementAt( 2 -1), _arrOffset_Waste.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqWaste, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  if (o_blnRetainSupernatant == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("Please speak to Chris if supernatant retention is essential"), Translate(""));
    abort;
  }
  else
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.res_Waste);
  }
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Src, Translate(",offsets"), 0, 1, _arrOffset_Src);
  SeqCopySequence(seqPCR_SourcePlates, ML_STAR.PCR_SourcePlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, _arrOffset_Src.ElementAt( 1 -1), _arrOffset_Src.ElementAt( 2 -1), _arrOffset_Src.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_SourcePlates, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Source Labware ("), o_strLabware_Src, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Src.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Src.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Src.ElementAt( 3 -1));
  if (o_blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.PCR_SourcePlates);
  }
  else
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.DWP_BindPlates);
  }
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Bind, Translate(",offsets"), 0, 1, _arrOffset_Bind);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, _arrOffset_Bind.ElementAt( 1 -1), _arrOffset_Bind.ElementAt( 2 -1), _arrOffset_Bind.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Bind Labware ("), o_strLabware_Bind, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Bind.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Bind.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Bind.ElementAt( 3 -1));
  SeqCopySequence(seqDWP_BindPlates2, ML_STAR.DWP_BindPlates2);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, _arrOffset_Bind.ElementAt( 1 -1), _arrOffset_Bind.ElementAt( 2 -1), _arrOffset_Bind.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindPlates2, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  _GetJSONValue(o_strConfigPath_Labware, o_strLabware_Dest, Translate(",offsets"), 0, 1, _arrOffset_Dest);
  SeqCopySequence(seqPCR_DestinationPlates, ML_STAR.PCR_DestinationPlates);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, _arrOffset_Dest.ElementAt( 1 -1), _arrOffset_Dest.ElementAt( 2 -1), _arrOffset_Dest.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqPCR_DestinationPlates, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Destination Labware ("), o_strLabware_Dest, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Dest.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Dest.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Dest.ElementAt( 3 -1));
  if (o_blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.PCR_SrcOnMagnet);
  }
  else
  {
    SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.DWP_BindOnMagnet);
  }
  _strJSONSearch = StrConcat4(o_strLabware_Mag, Translate(","), o_strLabware_Bind, Translate(" - offsets"));
  _GetJSONValue(o_strConfigPath_Labware, _strJSONSearch, Translate(""), 0, 1, _arrOffset_Mag);
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, _arrOffset_Mag.ElementAt( 1 -1), _arrOffset_Mag.ElementAt( 2 -1), _arrOffset_Mag.ElementAt( 3 -1));
  VIRTUALLABWARE_V2::MoveSeqAll(ML_STAR, seqDWP_BindOnMagnet, _arrOffsets_Instrument.ElementAt( 1 -1), _arrOffsets_Instrument.ElementAt( 2 -1), _arrOffsets_Instrument.ElementAt( 3 -1));
  TRACELEVEL::Trace_10(TRACE_LEVEL_RELEASE, Translate(">> Bind-On-Magnet Labware ("), o_strLabware_Bind, Translate(") - "), Translate(""), Translate("X: "), _arrOffset_Mag.ElementAt( 1 -1), Translate(", Y: "), _arrOffset_Mag.ElementAt( 2 -1), Translate(", Z: "), _arrOffset_Mag.ElementAt( 3 -1));
  if (o_blnWashOnMagnet == 1)
  {
    SeqCopySequence(seqWashPlate, seqDWP_BindOnMagnet);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("Please speak to Chris if washing on deck is essential"), Translate(""));
    abort;
  }
  if (o_blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_SrcPlates_Home);
    SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_SrcPlates_Magnet);
    SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_SrcPlates_HHS);
  }
  else
  {
    SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_BindPlates_Home);
    SeqCopySequence(seqTrp_BindPlates2, ML_STAR.trp_BindPlates2_Home);
    SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_BindPlates_Magnet);
    SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_BindPlates_HHS);
  }
  SeqCopySequence(seqTips, ML_STAR.NTR_Tips);
  SeqCopySequence(seqTipRacks, ML_STAR.NTR_TipRacks);
  SeqCopySequence(seqWasteRacks, ML_STAR.NTR_WasteTipRacks);
}

private function _GetJSONValue( variable i_strFilePath, variable i_strSearch_Prefix, variable i_strSearch_Suffix, variable i_blnTrace, variable i_blnForceCheck, variable & o_arr[] ) variable {
  private variable _strSearch;
  private variable o_var;
  private variable _varType;
  private variable _intArrSize;
  o_arr.SetSize( 0);
  o_var = 0;
  _strSearch = StrConcat2(i_strSearch_Prefix, i_strSearch_Suffix);
  JSONSEARCH::GetJSONEntry(i_strFilePath, _strSearch, 0, o_arr, o_var);
  _intArrSize = 0;
  _varType = StrGetType(o_var);
  if (i_blnForceCheck == 1)
  {
    if (_varType == "s")
    {
      if (o_var == "")
      {
        _intArrSize=o_arr.GetSize();
        if (_intArrSize == 0)
        {
          if(0){
            Trace("## Issue with _GetJSONValue");
            Trace("i_strFilePath: ", i_strFilePath);
            Trace("_strSearch: ", _strSearch);
            Trace("i_blnForceCheck: ", i_blnForceCheck);
            Trace("o_var: ", o_var);
            TRACELEVEL::TraceArray(TRACE_LEVEL_NONE, Translate(""), o_arr);
          }
          Trace(_strSearch);
          ErrRaise(1, Translate("Expected Error - contact CH33 with questions"));
          return (Translate(""));
        }
      }
    }
  }
  if (i_blnTrace >= 2)
  {
    if (_intArrSize != 0)
    {
      TRACELEVEL::TraceArray(TRACE_LEVEL_NONE, _strSearch, o_arr);
    }
    else
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_NONE, Translate("-- "), _strSearch, Translate(": "), o_var);
    }
  }
  return (o_var);
}

private function _GetLabwareParameters( variable i_strLabware, variable & o_arr[] ) void {
  private variable __[];
  private variable _int;
  o_arr.SetSize( 0);
  o_arr.SetSize(0);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intGripHeight"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intGripWidth"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intGripWidthOpen"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intGripForce"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intGripSpeed"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intZSpeed_Get"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intXAcceleration"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intZSpeed_Place"), 0, 1, __);
  o_arr.AddAsLast(_int);
  _int = _GetJSONValue(o_strConfigPath_Labware, i_strLabware, Translate(",intPlatePress"), 0, 1, __);
  o_arr.AddAsLast(_int);
  TRACELEVEL::TraceArray(TRACE_LEVEL_DEBUG, Translate(""), o_arr);
}

private function D_BarcodeScanning(  ) void {
}

private function _TimerSettings( timer & io_tmr, variable i_intTime, variable i_strTmrName ) void {
  private variable _rtn;
  private variable _intElapsedTime;
  private timer _tmr;
  if (o_blnSimMode == 0)
  {
    _intElapsedTime = io_tmr.GetElapsedTime();
    if (i_intTime == 0)
    {
      if( 0 == _tmr.SetTimer(1) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _rtn = _tmr.WaitTimer(hslFalse, hslFalse);
      if (0 == _rtn)
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      _intElapsedTime = io_tmr.GetElapsedTime();
      if (_intElapsedTime == 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Warning! This timer handle is not in use, therefore cannot be 'waited' for. Method will abort"), Translate(""));
        abort;
      }
    }
    else
    {
      if (_intElapsedTime != 0)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Warning! This timer handle is already in use. Method will proceed at risk"), Translate(""));
      }
    }
  }
  if (i_intTime > 900)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Warning! A timer will be set for 15 minutes. Please ensure this value is correct"), Translate(""));
  }
  if (i_intTime == 0)
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Waiting for "), i_strTmrName, Translate(" timer"), Translate(""), Translate(""), Translate(""));
    _rtn = io_tmr.WaitTimer(hslTrue, hslTrue);
    if (0 == _rtn)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Timer complete"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started "), i_strTmrName, Translate(" timer for "), i_intTime, Translate(""), Translate(" seconds"));
    if (o_blnSimMode == 1)
    {
      i_intTime = 1;
    }
    if( 0 == io_tmr.SetTimer(i_intTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
}

private function _HHSSettings( variable i_dev, variable i_intTemp, variable i_intShake, variable i_blnRelease ) void {
  private variable _rtn;
  if (i_intTemp != 0)
  {
    _rtn = HSLHamHeaterShaker::StartTempCtrl(i_dev, i_intTemp, 0);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started HHS temperature control on HHS_"), i_dev, Translate(" at "), i_intTemp, Translate("°C"), Translate(""));
  }
  if (i_intShake != 0)
  {
    _rtn = HSLHamHeaterShaker::StartShaker(i_dev, i_intShake);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started HHS shaking on HHS_"), i_dev, Translate(" at "), i_intShake, Translate("rpm"), Translate(""));
  }
  if (i_blnRelease == 1)
  {
    _rtn = HSLHamHeaterShaker::StopShaker(i_dev);
    _rtn = HSLHamHeaterShaker::SetPlateLock(i_dev, 0);
    TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Released labware on HHS_"), i_dev, Translate(""), Translate(""), Translate(""), Translate(""));
  }
  if (_rtn != 0)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## HHS encountered an error. Method will abort"), Translate(""));
    abort;
  }
}

private function _TipEject( variable i_blnEject ) variable {
  if (i_blnEject == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Eject"), Translate(""));
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    return (0);
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping Tip Eject"), Translate(""));
    return (1);
  }
}

private function _TipPickup( variable & _blnTips ) void {
  if (_blnTips == 1)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Skipping tip pickup"), Translate(""));
  }
  else
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Tip Pickup"), Translate(""));
    NTRDIRECTUSE_WGSPCRXP::gettips_96head(ML_STAR, seqTips, seqTipRacks, seqWasteRacks, o_strTipCounter, 300, 0, 1);
    _blnTips = 1;
  }
}
